PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999)}"', 'software_version': '1'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1079]
  expName = begibraintool
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
  rush = True
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  Data filename:
    f'data/{expInfo["participant"]}/{expName}_{expInfo["date"]}'
Routines
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
  Routine calibration_routine
    RoutineSettingsComponent calibration_routine
      disabled = True
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        periphereal_region_diameter = 0
      Each Frame:
        #periphereal_region_diameter = 0.5

        if slider_3.getRating() is not None:
            periphereal_region_diameter = slider_3.getRating()

        log_calibration.setText(f"Foveal region diameter: {periphereal_region_diameter:.2f}")
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.015
      pos = (0.45, 0.450)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Click here when calibrated
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    PolygonComponent periphereal_region_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size [set every frame] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    TextComponent log_calibration
      letterHeight = 0.025
      pos = (0.35, 0.35)
      startVal [time (s)] = 0.0
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
  Routine BL_1_SPATIAL_FREQ
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    DotsComponent dots_black_5
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_white_5
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    GratingComponent stim
      color [set every repeat] = $[1,1,1]
      contrast [set every repeat] = 1
      mask = $grating_mask
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = grating_size
      startVal [time (s)] = 0.0
      tex = sqr
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'space', 'right', 'left', 'down'
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      syncScreenRefresh = False
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    CodeComponent GP_data_adq_backend
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        import socket

        # Host machine IP
        HOST = '127.0.0.1'
        # Gazepoint Port
        PORT = 4242
        ADDRESS = (HOST, PORT)

        # Connect to Gazepoint API
        s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        s.connect(ADDRESS)

        # Send commands to initialize data streaming
        s.send(str.encode('<SET ID="ENABLE_SEND_CURSOR" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_POG_FIX" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DATA" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DIAL" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_HR" STATE="1" />\r\n'))
      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs_2.text = f'DIAL: {DIAL}, HR: {HR}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    PolygonComponent logs_background_2
      fillColor = white
      pos = (0.75, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################
        #threshold_dict = load_thresholds_from_json()
        spatial_frequency_threshold = threshold_dict['spatial_frequency_threshold']


        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        stim.sf = spatial_frequency_threshold + spatial_frequency_threshold*offset_porcentual/100
        stim.ori = orientacion


        #other

        gaze_position = mouse.getPosition()

        logs_parametros_trial.alignText='left'
        logs_parametros_trial.anchorHoriz='left'

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False

        logs.setAutoDraw(False)
        logs_parametros_trial.setAutoDraw(False)
        logs_background_2.setAutoDraw(False)
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        #gaze_position = mouse.getPosition()
        #logs_coordenadas_mirada.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        if general_config["logs"]:
            logs_parametros_trial.setText(
                f"Prueba 1 - Frecuencia espacial\n"
                f"Intento: {intento}\n"
                f"Orientación: {orientacion:.2f}\n"
                f"Excentricidad: {excentricidad}º\n"
                f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
                f"Tamaño Estímulo: {grating_size[0]:.2f}\n"
                f"Tipo: {tipo}\n"
                f"Umbral frecuencia espacial: {spatial_frequency_threshold:.2f}\n"
                f"Offset aplicado: {offset_porcentual}\n"
                f"SF mostrado: {spatial_frequency_threshold + spatial_frequency_threshold*offset_porcentual/100:.2f}"
            )
        else:
            logs.setAutoDraw(False)
            logs_parametros_trial.setAutoDraw(False)
            logs_background_2.setAutoDraw(False)

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        #dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        #if dist_from_center <= 0.25/2:#foveal_region.radius:
        #    logs.setText("La mirada está dentro de la región")

        #else:
        #    logs.setText("La mirada está fuera de la región")

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        # TODO: pasar a funcion

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and orientacion == 45: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and orientacion == 135: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_5.setAutoDraw(False)
            dots_black_5.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if general_config["feedback"]:
                    print(f"El resultado es: {success}")
                    show_feedback(feedback_txt, success)
                    #print("Se ha enseñado feedback desde each freame - bl1")
            # SHOW NOISE
            stim.setAutoDraw(False)
            show_noise(dots_white_5, dots_black_5, response_time, orientacion, feedback_txt) #only one call
            continueRoutine = False

        if flag_skip_all:
            print("Se ha omitido el bloque BL_1 por activación del flag")
            #trials_bl_1 = None
            trials_bl_1.finished = True
            #MODULE_1_TEST_1.finished = True
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  Routine BL_3_CONTRAST
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    DotsComponent dots_black_7
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_white_7
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    GratingComponent stim_5
      color [set every repeat] = $[1,1,1]
      mask = $grating_mask
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = grating_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      tex = sqr
      texture resolution = 512
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    KeyboardComponent key_resp_9
      allowedKeys = 'space', 'right', 'left'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent GP_data_adq_backend_5
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        import socket

        # Host machine IP
        HOST = '127.0.0.1'
        # Gazepoint Port
        PORT = 4242
        ADDRESS = (HOST, PORT)

        # Connect to Gazepoint API
        s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        s.connect(ADDRESS)

        # Send commands to initialize data streaming
        s.send(str.encode('<SET ID="ENABLE_SEND_CURSOR" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_POG_FIX" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DATA" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DIAL" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_HR" STATE="1" />\r\n'))
      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs_5.text = f'DIAL: {DIAL}, HR: {HR}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    PolygonComponent logs_background_8
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_3
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Py
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      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        import math
        import random

        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################
        #threshold_dict = load_thresholds_from_json()
        spatial_frequency_threshold = threshold_dict['spatial_frequency_threshold']
        contrast_threshold = threshold_dict['contrast_threshold']

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        stim_5.sf = spatial_frequency_threshold
        stim_5.contrast = contrast_threshold + contrast_threshold*offset_porcentual
        stim_5.ori = orientacion

        #other
        gaze_position = mouse.getPosition()

        logs_parametros_trial_5.alignText='left'
        logs_parametros_trial_5.anchorHoriz='left'
        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False

        logs_parametros_trial_5.setAutoDraw(False)
        logs_background_8.setAutoDraw(False)
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        #gaze_position = mouse.getPosition()
        #logs_coordenadas_mirada_5.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        if general_config["logs"]:
            logs_parametros_trial_5.setText(
                f"Prueba 3 - Contraste\n"
                f"Intento: {intento}\n"
                f"Orientación: {orientacion:.2f}\n"
                f"Excentricidad: {excentricidad}º\n"
                f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
                f"Tamaño Estímulo: {grating_size[0]:.2f}\n"
                f"Tipo: {tipo}\n"
                f"Umbral contraste cargado: {contrast_threshold:.2f}\n"
                f"Offset aplicado: {offset_porcentual}\n"
                f"Contraste mostrado: {contrast_threshold + contrast_threshold*offset_porcentual/100:.2f}"
            )
        else:
            logs_parametros_trial_5.setAutoDraw(False)
            logs_background_8.setAutoDraw(False)


        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        #dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        #if dist_from_center <= 0.25/2:#foveal_region.radius:
        #    logs_6.setText("La mirada está dentro de la región")

        #else:
        #    logs_6.setText("La mirada está fuera de la región")

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################
        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and orientacion == 45: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and orientacion == 135: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_7.setAutoDraw(False)
            dots_black_7.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if general_config["feedback"]:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_3, success)

            # SHOW NOISE
            stim_5.setAutoDraw(False)
            show_noise(dots_white_7, dots_black_7, response_time, orientacion, feedback_txt_3) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_3.finished = True
  Routine BL_2_COLOR
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    DotsComponent dots_black_6
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_white_6
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'space', 'right', 'left'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent GP_data_adq_backend_6
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
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      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs_5.text = f'DIAL: {DIAL}, HR: {HR}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    PolygonComponent logs_background_10
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent stim_img
      image [set every repeat] = .\images\custom_stim.png
      size = grating_size
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent feedback_txt_2
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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    CodeComponent code_14
      Code Type = Py
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      Before Experiment:
        import pandas as pd

        opacidad = 1
      Begin Experiment:
        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]
      Begin Routine:
        import math
        import random

        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################
        #threshold_dict = load_thresholds_from_json()
        frecuencia_espacial = threshold_dict['spatial_frequency_threshold']
        saturation_threshold = threshold_dict['color_threshold'][color_name]

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        #stim_6.sf = frecuencia_espacial
        #stim_6.orientation = orientacion
        stim_img.ori = orientacion

        #other
        #gaze_position = mouse.getPosition()

        logs_parametros_trial_6.alignText='left'
        logs_parametros_trial_6.anchorHoriz='left'

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        #gaze_position = mouse.getPosition()
        #logs_coordenadas_mirada_6.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        if general_config["logs"]:
            logs_parametros_trial_6.setText(
                f"Prueba 2 - Color/saturación\n"
                f"Intento: {intento}\n"
                f"Orientación: {orientacion:.2f}\n"
                f"Excentricidad: {excentricidad}º\n"
                f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
                f"Tamaño Estímulo: {grating_size[0]:.2f}\n"
                #f"Tipo: {tipo}\n"
                f"Offset (%): {umbral_porcentual:.2f}\n"
                f"Umbral color {color_name}(%): {saturation_threshold:.2f}\n"
                f"Sat. C1 (%): {c1_hsv[1]:.2f}\n"
                f"Sat. C2 (%): {c2_hsv[1]:.2f}\n"
        )

        else:
            logs_parametros_trial_6.setAutoDraw(False)
            logs_background_10.setAutoDraw(False)

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        #dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        #if dist_from_center <= 0.25/2:#foveal_region.radius:
        #    logs_7.setText("La mirada está dentro de la circunferencia")

        #else:
        #    logs_7.setText("La mirada está fuera de la circunferencia")


        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################
        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and orientacion == 45: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and orientacion == 135: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_6.setAutoDraw(False)
            dots_black_6.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if general_config["feedback"]:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_2, success)
             # SHOW NOISE
            stim_img.setAutoDraw(False)
            show_noise(dots_white_6, dots_black_6, response_time, orientacion, feedback_txt_2) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_2.finished = True
    CodeComponent gabor_generator_2
      Code Type = Py
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      Before Experiment:
        import numpy as np
        from PIL import Image
        import matplotlib.pyplot as plt


        def save_gabor_patch_image(frequency, size, c1, c2):
            amp, f = generate_gabor_patch(frequency, size)

            # Convertir colores a numpy arrays y expandir dimensiones para el canal de transparencia
            c1 = np.array(c1)
            c2 = np.array(c2)

            # Calcular los valores de color para el parche
            im_rgb_vals = (c1 * amp[:, :, None]) + (c2 * (1 - amp[:, :, None]))

            # Crear el canal de alfa (transparencia): 1 donde hay el parche, 0 en el fondo
            alpha_channel = f

            # Combinar los valores RGB con el canal alfa para crear una imagen RGBA
            im_rgba_vals = np.dstack((im_rgb_vals, alpha_channel))

            # Convertir a imagen
            im = Image.fromarray((im_rgba_vals * 255).astype('uint8'), 'RGBA')
            im.save(f"./images/custom_stim.png")

        def generate_gabor_patch(frequency, size):
            im_range = np.arange(size)
            x, y = np.meshgrid(im_range, im_range)
            dx = x - size // 2
            dy = y - size // 2
            t = np.arctan2(dy, dx)
            r = np.sqrt(dx ** 2 + dy ** 2)
            x = r * np.cos(t)
            y = r * np.sin(t)

            amp = np.where(np.cos(2 * np.pi * (x * frequency)) >= 0, 1, 0)

            if grating_mask == 'circle':
                f = np.where(r <= size // 2, 1, 0)
            elif grating_mask == 'gauss':
                f = np.cos((np.pi * (r + size // 2)) / (size - 1) - np.pi / 2)
                f[r > size // 2] = 0
            else:
                f = 0

            return amp, f

        def hsv_a_rgb(h, s, v):
            """
            Convierte un color desde HSV a RGB.

            Parámetros:
            h (float): Matiz (Hue) en grados (0-360).
            s (float): Saturación (Saturation) como porcentaje (0-100).
            v (float): Valor (Value) como porcentaje (0-100).

            Retorna:
            tuple: Una tupla con valores (R, G, B), cada uno en el rango de 0 a 255.
            """
            h = h % 360
            s /= 100
            v /= 100

            c = v * s
            x = c * (1 - abs((h / 60) % 2 - 1))
            m = v - c

            if 0 <= h < 60:
                r, g, b = c, x, 0
            elif 60 <= h < 120:
                r, g, b = x, c, 0
            elif 120 <= h < 180:
                r, g, b = 0, c, x
            elif 180 <= h < 240:
                r, g, b = 0, x, c
            elif 240 <= h < 300:
                r, g, b = x, 0, c
            else:
                r, g, b = c, 0, x

            r = (r + m) * 255
            g = (g + m) * 255
            b = (b + m) * 255

            return int(round(r)), int(round(g)), int(round(b))


        def normalizar_rgb(rgb):
            """
            Normaliza una tupla de valores RGB dividiendo cada componente por 255.

            Parámetros:
            rgb (tuple): Una tupla con valores (R, G, B), cada uno en el rango de 0 a 255.

            Retorna:
            tuple: Una tupla con valores normalizados (R, G, B), cada uno en el rango de 0 a 1.
            """
            return tuple(component / 255 for component in rgb)
      Begin Routine:
        frequency = frecuencia_espacial/500 # division para equiparar con unidades del parche de psychopy

        size = 800
        c1_hsv = [color_1_h,color_1_s,color_1_v] # color del excel

        c2_hsv = [color_1_h,
                  min(100, color_1_s + saturation_threshold * umbral_porcentual / 100),# color del excel con modificacion segun umbral sin que supere el valor 100
                  color_1_v]


        #logs.text = f'freq = {frequency:.2f}\nc1 = ({c1[0]:.2f}, {c1[1]:.2f}, {c1[2]:.2f})\nc2 = ({c2[0]:.2f}, {c2[1]:.2f}, {c2[2]:.2f})'
        # Generar el parche de Gabor
        save_gabor_patch_image(frequency,
                               size,
                               normalizar_rgb(hsv_a_rgb(*c1_hsv)),
                               normalizar_rgb(hsv_a_rgb(*c2_hsv)))
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
  Routine BL_4_SEMANTIC_STIM
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    ImageComponent semantic_stim
      image [set every repeat] = $(sf_path_0+sf_path_1+sf_path_2)
      pos = (0.0, 0)
      size [set every repeat] = tamanyo
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'space', 'right', 'left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_13
      disabled = True
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Py
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      Begin Routine:
        logs_parametros_trial_8.alignText='left'
        logs_parametros_trial_8.anchorHoriz='left'

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False
      Each Frame:
        if general_config["logs"]:
            logs_parametros_trial_8.setText(
                f"Prueba 5 - Estímulos semánticos\n"
                f"Intento: {intento}\n"
                f"Excentricidad: {excentricidad}º\n"
                f"Tamaño Estímulo: {tamanyo:.2f}\n"
                f"Tipo: {tipo}\n"
                f"Tamanyo imagen cm: \n"
                f"Ancho pantalla cm: {screen_width_cm}\n"       #= float(modules["module_1"]["tests"]["test_4"]["config"]["screen_width_cm"])
                f"Distancia sujeto-pantalla cm: {distance_to_screen_cm}\n" #    = float(modules["module_1"]["tests"]["test_4"]["config"]["distance_to_screen_cm"])
                f"Resolución pantalla dpi: {screen_resolution_dpi}\n" #    = float(modules["module_1"]["tests"]["test_4"]["config"]["screen_resolution_dpi"])
            )

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and respuesta == 'vivo': # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and respuesta == 'inerte': # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_9.setAutoDraw(False)
            dots_black_9.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if general_config["feedback"]:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_5, success)
            semantic_stim.setAutoDraw(False)
            show_noise(dots_white_9, dots_black_9, response_time, 0, feedback_txt_5) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_4.finished = True
    TextComponent logs_parametros_trial_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent right_arrow
      fillColor = white
      ori = 90
      pos = (0.5, 0)
      shape = arrow
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent left_arrow
      fillColor = white
      ori = -90
      pos = (-0.5, 0)
      shape = arrow
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent right_arrow_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = Ser vivo
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    TextComponent left_arrow_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = Inerte
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    DotsComponent dots_white_9
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_9
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_5
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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  Routine CONTRAST_STAIRCASE_TEST
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    CodeComponent code_18
      Code Type = Py
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      Begin Routine:
        import csv
        import tkinter as tk
        from tkinter import messagebox

        # Variables estaticas
        contrast_starting_value = 0.25#0.05
        contrast_step_size = 0.02

        # Inicializacion de variables que posteriormente cambian
        contrast = contrast_starting_value
        staircase_test_orientation = get_random_orientation()
        step = contrast_step_size
        reversals = 0
        last_direction = None
        reversal_contrasts = []
        correct_responses = 0
        trials = []

        # Para almacenar las respuestas del participante
        response = None

        grating.contrast = contrast
        grating.ori = staircase_test_orientation

        # Cargar frecuencia espacial del test si se ha seleccionado la opcion
        # pretest_standard_thresholds_path = "./config_data/standard_thresholds.json"
        if general_config["pretest_standard_values"]:
            if not os.path.exists(pretest_standard_thresholds_path):
                root = tk.Tk()
                root.withdraw()  # Oculta la ventana principal
                messagebox.showwarning("Advertencia", f"No se ha encontrado el archivo de configuración estándar. Compruebe la ruta {pretest_standard_thresholds_path}.")
            else:
                _threshold_dict = load_thresholds_from_json(filename=pretest_standard_thresholds_path)
                spatial_frequency = _threshold_dict['spatial_frequency_threshold']
                threshold_dict = load_thresholds_from_json()  # archivo de usuario
                print(f"Se ha establecido la frecuencia espacial DEFAULT del estímulo a un valor de {spatial_frequency} unidades.")
        else:
            threshold_dict = load_thresholds_from_json() # archivo de usuario
            spatial_frequency = threshold_dict['spatial_frequency_threshold']
            print(f"Se ha establecido la frecuencia espacial del estímulo a un valor de {spatial_frequency} unidades.")

        grating.sf = spatial_frequency

        dots_white.setAutoDraw(False)
        dots_black.setAutoDraw(False)
      Each Frame:
        keys = event.getKeys()

        if 's' in keys: # El paciente ve el estimulo
            response = True
        elif 'a' in keys: # El paciente no ve las lineas
            response = False
        elif 'right' in keys and staircase_test_orientation == 45: # Acierto
            response = True
        elif 'left' in keys and staircase_test_orientation == 135: # Acierto
            response = True
        elif 'right' in keys or 'left' in keys:
            response = False

        # Lógica del staircase
        if response is not None:
            if response:  # Respuesta correcta: el paciente ve el estimulo
                correct_responses += 1
                if correct_responses == 2:  # Después de 2 respuestas correctas consecutivas
                    correct_responses = 0
                    contrast = max(0, contrast - step)  # Disminuir el contraste
                    last_direction = "down"
            else:  # Respuesta incorrecta: el paciente no ve el estimulo
                contrast += step  # Aumentar el contraste
                correct_responses = 0
                if last_direction == "down":
                    reversals += 1
                    reversal_contrasts.append(contrast)

                    if (reversals % 3 == 0) and reversals != 0:
                        step = step/2
                        print(f"Reversals = {reversals}; New step = {step}")
                        last_direction = "up"
                    else:
                        print('Reversal detected ({reversals})')
                last_direction = "up"

            grating.setAutoDraw(False)
            show_noise(dots_white, dots_black, staircase_noise_duration)
            grating.setAutoDraw(True)
            # Actualizar el contraste del estímulo
            grating.contrast = contrast
            staircase_test_orientation = get_random_orientation()
            grating.ori = staircase_test_orientation

            # Registrar la información del ensayo
            trials.append({
                'trial': len(trials) + 1,
                'contrast': contrast,
                'response': response,
                'reversals': reversals
            })

            # Restablecer la respuesta para el siguiente ensayo
            response = None

            # Regla de detencion
            if reversals >= stop_reversals:
                print(trials)
                # almaceno trials en 'data' para su posterior analisis
                staircase_data_filename = f"./data/{expInfo['participant']}/contrast_staircase_data_{expInfo['participant']}.csv"
                with open(staircase_data_filename, mode='w', newline='') as file:
                    writer = csv.DictWriter(file, fieldnames=['trial', 'contrast', 'response', 'reversals'])
                    writer.writeheader()
                    writer.writerows(trials)

                # Actualizar y almacenar el diccionario de thresholds
                test_contrast = get_threshold('contrast', staircase_data_filename)
                print(f"Contrast Threshold for patient: {test_contrast}")
                threshold_dict['contrast_threshold'] = test_contrast
                save_thresholds_to_json(threshold_dict)

                dots_white.setAutoDraw(False)
                dots_black.setAutoDraw(False)
                continueRoutine = False

        #########################################################
        #############____________LOGS_________###################
        #########################################################
        if general_config["logs"]:
            logs_10.text = f"Step Size = {step}"
        else:
            logs_10.setAutoDraw(False)

        dots_white.setAutoDraw(False)
        dots_black.setAutoDraw(False)
    KeyboardComponent key_resp_14
      allowedKeys = 's','n','right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs_10
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    GratingComponent grating
      mask = $grating_mask
      saveStartStop = False
      size = grating_size
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    DotsComponent dots_white
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine COLOR_STAIRCASE_TEST
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    CodeComponent code_19
      Code Type = Py
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      Begin Routine:
        import csv
        # Variables estaticas
        saturation_starting_value = 55
        saturation_step_size = 5
        staircase_test_orientation = get_random_orientation()

        # Inicializacion de variables que posteriormente cambian
        saturation = saturation_starting_value
        step = saturation_step_size
        reversals = 0
        last_direction = None
        reversal_saturations = []
        correct_responses = 0
        trials = []

        # Para almacenar las respuestas del participante
        response = None

        dots_white_2.setAutoDraw(False)
        dots_black_2.setAutoDraw(False)

        # Tipo de test
        if color_saturation_type == 'low':
            static_saturation = 0
            saturation_starting_value = 15
        elif color_saturation_type == 'high':
            static_saturation = 70
            saturation_starting_value = 100
        elif color_saturation_type == 'medium':
            static_saturation = 50
            saturation_starting_value = 70
        else:
            print("No se ha especificado un tipo de saturación a medir")
            static_saturation = 0
            saturation_starting_value = 0

        saturation = saturation_starting_value


        # Inicializacion de variables

        threshold_dict = load_thresholds_from_json() # archivo de usuario
        print(f"SE HA CARGADO THRESHOLD DICT EN COLOR: {threshold_dict}")

        if general_config["pretest_standard_values"]:
            if not os.path.exists(pretest_standard_thresholds_path):
                root = tk.Tk()
                root.withdraw()  # Oculta la ventana principal
                messagebox.showwarning("Advertencia", f"No se ha encontrado el archivo de configuración estándar. Compruebe la ruta {pretest_standard_thresholds_path}.")
            else:
                _threshold_dict = load_thresholds_from_json(filename=pretest_standard_thresholds_path)
                spatial_frequency = _threshold_dict['spatial_frequency_threshold']
                threshold_dict = load_thresholds_from_json()  # archivo de usuario
                print(f"Se ha establecido la frecuencia espacial DEFAULT del estímulo a un valor de {spatial_frequency} unidades.")

        else:
            spatial_frequency = threshold_dict['spatial_frequency_threshold']
            print(f"Se ha establecido la frecuencia espacial del estímulo a un valor personalizado de {spatial_frequency} unidades.")


        if 'color_threshold' not in threshold_dict:
            threshold_dict['color_threshold'] = {}


        frequency = spatial_frequency/500 # division para equiparar con psychopy
        size = 800
        c1_hsv = (color_h, static_saturation, color_v) # From XLS
        c2_hsv = (color_h, saturation, color_v)
        print(f"Testing color: {color_name}")

        image_2.ori = staircase_test_orientation

        # Generar el parche de Gabor
        save_gabor_patch_image(frequency,
                               size,
                               normalizar_rgb(hsv_a_rgb(*c1_hsv)),
                               normalizar_rgb(hsv_a_rgb(*c2_hsv)))
      Each Frame:
        keys = event.getKeys()

        if 's' in keys: # El paciente ve el estimulo
            response = True
        elif 'a' in keys: # El paciente no ve las lineas
            response = False
        elif 'right' in keys and staircase_test_orientation == 45: # Acierto
            response = True
        elif 'left' in keys and staircase_test_orientation == 135: # Acierto
            response = True
        elif 'right' in keys or 'left' in keys:
            response = False

        # Lógica del staircase
        if response is not None:
            if response:  # Respuesta correcta: el paciente ve el estimulo
                correct_responses += 1
                if correct_responses == 2:  # Después de 2 respuestas correctas consecutivas
                    correct_responses = 0
                    saturation = max(0, saturation - step)
                    if saturation < static_saturation:
                        # si pasa esto, el test se pasa de rosca. Hay que limitar el valor.
                        saturation = static_saturation
                    last_direction = "down"
            else:  # Respuesta incorrecta: el paciente no ve el estimulo
                saturation += step  # Aumentar el contraste
                if saturation > 100: # Limitar maximo para que no se pase de rosca
                    saturation = 100
                correct_responses = 0
                if last_direction == "down":
                    reversals += 1
                    reversal_saturations.append(saturation)
                    # Regla para aumentar la granularidad del test
                    if (reversals % 2 == 0) and reversals != 0:
                        step = step/2
                        print(f"Reversals = {reversals}; New step = {step}")
                        last_direction = "up"
                    else:
                        print(f'Reversal detected ({reversals})')
                last_direction = "up"

            image_2.setAutoDraw(False)
            show_noise(dots_white_2, dots_black_2, staircase_noise_duration)
            image_2.setAutoDraw(True)

            # Actualizar el color y rotacion del estímulo
            staircase_test_orientation = get_random_orientation()
            image_2.ori = staircase_test_orientation
            c2_hsv = (color_h, saturation, color_v)
            print(f"Color 1: {c1_hsv}\nColor 2: {c2_hsv}\n")

        #logs.text = f'freq = {frequency:.2f}\nc1 = ({c1[0]:.2f}, {c1[1]:.2f}, {c1[2]:.2f})\nc2 = ({c2[0]:.2f}, {c2[1]:.2f}, {c2[2]:.2f})'
        # Generar el parche de Gabor

            save_gabor_patch_image(frequency,
                               size,
                               normalizar_rgb(hsv_a_rgb(*c1_hsv)),
                               normalizar_rgb(hsv_a_rgb(*c2_hsv)))

            # Registrar la información del ensayo
            trials.append({
                'trial': len(trials) + 1,
                'saturation': saturation,
                'response': response,
                'reversals': reversals
            })

            # Restablecer la respuesta para el siguiente ensayo
            response = None

            # Regla de detencion
            if reversals >= stop_reversals:
                print(trials)
                # almaceno trials en 'data' para su posterior analisis
                staircase_data_filename = f"./data/{expInfo['participant']}/saturation_staircase_data_{expInfo['participant']}_{color_name}.csv"#_{color_saturation_type}.csv"
                with open(staircase_data_filename, mode='w', newline='') as file:
                    writer = csv.DictWriter(file, fieldnames=['trial', 'saturation', 'response', 'reversals'])
                    writer.writeheader()
                    writer.writerows(trials)

                # Actualizar y almacenar el diccionario de thresholds
                test_saturation = get_threshold('saturation', staircase_data_filename)
                print(f"Saturation Threshold for patient: {test_saturation}")
                threshold_dict['color_threshold'][color_name] = test_saturation-static_saturation
                save_thresholds_to_json(threshold_dict)


                continueRoutine = False

            dots_white_2.setAutoDraw(False)
            dots_black_2.setAutoDraw(False)

        #########################################################
        #############____________LOGS_________###################
        #########################################################
        if general_config["logs"]:
            logs_11.text = f"Step Size = {step}"
        else:
            logs_11.setAutoDraw(False)

        dots_white_2.setAutoDraw(False)
        dots_black_2.setAutoDraw(False)
    KeyboardComponent key_resp_15
      allowedKeys = 's','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs_11
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    CodeComponent gabor_generator
      Code Type = Py
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      Before Experiment:
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    ImageComponent image_2
      image [set every frame] = .\images\custom_stim.png
      size = grating_size
      startVal [time (s)] = 0.0
      texture resolution = 512
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    DotsComponent dots_white_2
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_2
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPATIAL_FREQ_STAIRCASE_TEST
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    GratingComponent grating_7
      mask = $grating_mask
      saveStartStop = False
      size = grating_size
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    DotsComponent dots_black_3
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_white_3
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    CodeComponent code_20
      Code Type = Py
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      Begin Experiment:
        import random

        def get_random_orientation():
            return random.choice([45, 135])
      Begin Routine:
        import csv

        # Variables estaticas
        sf_starting_value = 50
        sf_step_size = 15
        sf_starting_orientation = get_random_orientation()


        # Inicializacion de variables que posteriormente cambian
        sf = sf_starting_value
        step = sf_step_size
        staircase_test_orientation = sf_starting_orientation
        reversals = 0
        last_direction = None
        reversal_sf = []
        correct_responses = 0
        trials = []

        # Para almacenar las respuestas del participante
        response = None

        # Acciones inicio de rutina
        grating_7.sf = sf
        grating_7.ori = staircase_test_orientation

        dots_white_3.setAutoDraw(False)
        dots_black_3.setAutoDraw(False)

        #threshold_dict = load_thresholds_from_json()     #cargar diccionario
        threshold_dict = {}
      Each Frame:
        keys = event.getKeys()

        if 's' in keys: # El paciente ve el estimulo
            response = True
        elif 'a' in keys: # El paciente no ve las lineas
            response = False
        elif 'right' in keys and staircase_test_orientation == 45: # Acierto
            response = True
        elif 'left' in keys and staircase_test_orientation == 135: # Acierto
            response = True
        elif 'right' in keys or 'left' in keys:
            response = False

        # Lógica del staircase
        if response is not None:
            if response:  # Respuesta correcta: el paciente ve las lineas del estimulo
                correct_responses += 1
                if correct_responses == 2:  # Después de 2 respuestas correctas consecutivas
                    correct_responses = 0
                    sf = max(0, sf + step)  # Aumentar las lineas
                    last_direction = "down"
            else:
                sf = sf - step
                correct_responses = 0
                if last_direction == "down":
                    reversals += 1
                    reversal_sf.append(sf)
                    # Regla para aumentar la granularidad del test
                    if (reversals % 3 == 0) and reversals != 0:
                        step = step/2
                        print(f"Reversals = {reversals}; New step = {step}")
                        last_direction = "up"
                    else:
                        print(f'Reversal detected ({reversals})')
                last_direction = "up"

            grating_7.setAutoDraw(False)
            show_noise(dots_white_3, dots_black_3, staircase_noise_duration)
            grating_7.setAutoDraw(True)

            # Actualizar el sf y orientacion del estímulo
            grating_7.sf = sf
            staircase_test_orientation = get_random_orientation()
            grating_7.ori = staircase_test_orientation


            # Registrar la información del ensayo
            trials.append({
                'trial': len(trials) + 1,
                'spatial_frequency': sf,
                'response': response,
                'reversals': reversals
            })

            # Restablecer la respuesta para el siguiente ensayo
            response = None

            # Regla de detencion
            if reversals >= stop_reversals:
                print(trials)

                # almaceno trials en 'data' para su posterior analisis (CSV)
                staircase_data_filename = f"./data/{expInfo['participant']}/sf_staircase_data_{expInfo['participant']}.csv"

                with open(staircase_data_filename, mode='w', newline='') as file:
                    writer = csv.DictWriter(file, fieldnames=['trial', 'spatial_frequency', 'response', 'reversals'])
                    writer.writeheader()
                    writer.writerows(trials)

                # Actualizar y almacenar el diccionario de thresholds
                test_sf = get_threshold('spatial_frequency', staircase_data_filename)
                print(f"Spatial Frequency Threshold for patient: {test_sf}")
                threshold_dict['spatial_frequency_threshold'] = test_sf
                save_thresholds_to_json(threshold_dict)

                continueRoutine = False

        #########################################################
        #############____________LOGS_________###################
        #########################################################
        if general_config["logs"]:
            logs_12.text = f"Step Size = {step}"
        else:
            logs_12.setAutoDraw(False)

        dots_white_3.setAutoDraw(False)
        dots_black_3.setAutoDraw(False)
    KeyboardComponent key_resp_16
      allowedKeys = 's','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs_12
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FFT_STAIRCASE_TEST
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    CodeComponent flicker_daemon
      Code Type = Auto->JS
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      Begin Routine:
        frecuencia_monitor = 144
        frecuencia_parpadeo = 30  # Hz, frecuencia de parpadeo deseada (valor inicial)
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Each Frame:
        if fft is not None:
            frames_por_ciclo = int((frecuencia_monitor / fft) / 2)
            opacidad = 1 if (frameN % (2 * frames_por_ciclo)) < frames_por_ciclo else 0
        else:
            opacidad = 1

        dot.opacity = opacidad
    CodeComponent code_21
      Code Type = Py
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      Begin Routine:
        import csv

        # Variables estaticas
        fft_starting_value = 25
        fft_step_size = 2
        staircase_test_orientation = get_random_orientation()

        # Inicializacion de variables que posteriormente cambian
        fft = fft_starting_value
        step = fft_step_size
        reversals = 0
        last_direction = None
        reversal_ffts = []
        correct_responses = 0
        trials = []

        # Para almacenar las respuestas del participante
        response = None

        # Cargar frecuencia espacial del test
        #threshold_dict = load_thresholds_from_json()
        #grating_8.sf = threshold_dict['spatial_frequency_threshold']
        #grating_8.ori = staircase_test_orientation

        #print(f"Se ha establecido la frecuencia espacial del estímulo a un valor de {threshold_dict['spatial_frequency_threshold']} unidades.")
      Each Frame:
        keys = event.getKeys()

        if 's' in keys: # El paciente ve el estimulo
            response = True
        elif 'n' in keys: # El paciente no ve las lineas
            response = False
        '''
        elif 'right' in keys and staircase_test_orientation == 45: # Acierto
            response = True
        elif 'left' in keys and staircase_test_orientation == 135: # Acierto
            response = True
        elif 'right' in keys or 'left' in keys:
            response = False
        '''
        # Lógica del staircase
        if response is not None:
            if response:  # Respuesta correcta: el paciente ve el parpadeo
                correct_responses += 1
                if correct_responses == 2:  # Después de 2 respuestas correctas consecutivas
                    correct_responses = 0
                    fft = max(0, fft + step)  # Aumentar flicker
                    last_direction = "down"
            else:  # Respuesta incorrecta: el paciente no aprecia el parpadeo
                fft -= step  # disminuir el parpadeo
                correct_responses = 0
                if last_direction == "down":
                    reversals += 1
                    reversal_ffts.append(fft)
                    # Regla para aumentar la granularidad del test
                    if (reversals % 3 == 0) and reversals != 0:
                        step = step/2
                        print(f"Reversals = {reversals}; New step = {step}")
                        last_direction = "up"
                    else:
                        print(f'Reversal detected ({reversals})')
                last_direction = "up"

            dot.setAutoDraw(False)
            show_noise(dots_white_4, dots_black_4, staircase_noise_duration)
            dot.setAutoDraw(True)

            #staircase_test_orientation = get_random_orientation()
            #grating_8.ori = staircase_test_orientation

            # Actualizar el contraste del estímulo
            #grating.contrast = contrast

            # Registrar la información del ensayo
            trials.append({
                'trial': len(trials) + 1,
                'fft': fft,
                'response': response,
                'reversals': reversals
            })

            # Restablecer la respuesta para el siguiente ensayo
            response = None

            # Regla de detencion
            if reversals >= stop_reversals:
                print(trials)
                # almaceno trials en 'data' para su posterior analisis
                staircase_data_filename = f"./data/{expInfo['participant']}/fft_staircase_data_{expInfo['participant']}.csv"
                with open(staircase_data_filename, mode='w', newline='') as file:
                    writer = csv.DictWriter(file, fieldnames=['trial', 'fft', 'response', 'reversals'])
                    writer.writeheader()
                    writer.writerows(trials)

                # Actualizar y almacenar el diccionario de thresholds
                test_fft = get_threshold('fft', staircase_data_filename)
                print(f"FFT Threshold for patient: {test_fft}")
                #threshold_dict['flicker_threshold'] = test_fft
                #save_thresholds_to_json(threshold_dict)

                continueRoutine = False

        #########################################################
        #############____________LOGS_________###################
        #########################################################

        if general_config["logs"]:
            logs_13.text = f"Step Size = {step}\nFFT freq = {fft} Hz"


        dots_white_4.setAutoDraw(False)
        dots_black_4.setAutoDraw(False)
    KeyboardComponent key_resp_17
      allowedKeys = 's','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs_13
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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    GratingComponent grating_8
      disabled = True
      mask = circle
      saveStartStop = False
      size = grating_size
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    DotsComponent dots_white_4
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_4
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent FPS_counter_2
      Code Type = Auto->JS
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      Begin Routine:
        tiempo_anterior = 0
        fps = 0  # Variable para almacenar el FPS
      Each Frame:
        tiempo_actual = t
        delta_tiempo = tiempo_actual - tiempo_anterior # tiempo desde el frame anterior

        if delta_tiempo > 0:
            fps = 1.0 / delta_tiempo  # Frecuencia: (1 / tiempo entre frames) (Hz)

        tiempo_anterior = tiempo_actual

        FPS_logs_2.text = f"FPS: {fps:.2f}"  # Mostrar con 2 decimales
    TextComponent FPS_logs_2
      letterHeight = 0.025
      pos = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    PolygonComponent dot
      fillColor = white
      saveStartStop = False
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine INSTRUCTIONS
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    ImageComponent logo_bio_2
      image = images/BIOBIZKAIA_horizontal_CMYK.png
      pos = (-0.45, 0.35)
      saveStartStop = False
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent logo_compneurolab_2
      image = images/compneuro_horizontal.png
      pos = (0.45, 0.35)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_title_2
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = TEST DE EVALUACIÓN DE LOS SISTEMAS MAGNOCELULAR Y PARVOCELULAR
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    TextComponent text_instructions_2
      letterHeight = 0.035
      pos = (0, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        win.color = "grey"


        instruction_no = 0
        messages_instructions = [title]
        for i in range(1, 6):
            var_name = f"instruction_{i}"
            if var_name in globals():
                instruction = globals()[var_name]
                if instruction: # Si la instrucción no esta vacía se añade a la lista que aparecera por pantalla
                    messages_instructions.append(instruction)
        print(f'Lista de instrucciones cargada: {messages_instructions}')
      Each Frame:
        text_instructions_2.text = messages_instructions[instruction_no]

        if instruction_no == (len(messages_instructions) - 1):
            button_next_instruction_2.opacity = 0
            #button_next_instruction.status = PAUSED
        else:
            button_next_instruction_2.opacity = 1.0
            #button_next_instruction.status = STARTED

        if instruction_no == 0:
            button_previous_instruction_2.opacity = 0
            #button_previous_instruction.status = PAUSED
        else:
            button_previous_instruction_2.opacity = 1.0
            #button_previous_instruction.status = STARTED

        ###################################################
        ####________________EVENTS_____________________####
        ###################################################

        keys = event.getKeys()  # Cada llamada al buffer lo vacía

        if 'right' in keys:
            if instruction_no < len(messages_instructions)-1:
                instruction_no+=1
        elif 'left' in keys:
            if 0 < instruction_no:
                instruction_no-=1
    ButtonComponent button_next_instruction_2
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.5, -0.4)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = Siguiente -->
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      callback:
        if instruction_no < len(messages_instructions)-1:
            instruction_no+=1
    ButtonComponent button_previous_instruction_2
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = <--Anterior
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      callback:
        if 0 < instruction_no:
            instruction_no-=1
    KeyboardComponent key_resp_skip_instructions_2
      allowedKeys = 'space','a','b'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.35
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  Routine LOAD_THRESHOLDS
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    CodeComponent code_22
      Code Type = Py
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      Begin Routine:
        import tkinter as tk
        from tkinter import messagebox
        import json

        # Llamada a la función
        threshold_dict = load_thresholds_from_json()

        # Manejo del resultado
        if threshold_dict == -1:
            # Crear ventana para manejar el caso de archivo no encontrado
            root = tk.Tk()
            root.withdraw()
            use_defaults = messagebox.askyesno(
                "Archivo no encontrado",
                "No se encontró el archivo de umbrales. ¿Desea usar valores por defecto?"
            )
            root.destroy()

            if use_defaults:
                # Valores por defecto
                threshold_dict = {
                    "spatial_frequency_threshold": 100,
                    "flicker_threshold": 50,
                    "contrast_threshold": 0.03,
                    "color_threshold": {
                        "green": 25,
                        "red": 25
                    }
                }
                print("Usando valores por defecto.")
            else:
                raise FileNotFoundError("El archivo de umbrales no se encontró y no se aceptaron valores por defecto.")

        else:
            # Mostrar los valores cargados en una ventana
            root = tk.Tk()
            root.withdraw()
            values = "\n".join([f"{key}: {value}" for key, value in threshold_dict.items()])
            messagebox.showinfo(
                f"Se cargaron los siguientes valores para el usuario {expInfo['participant']}:\n\n{values}\nSe ha establecido la siguiente configuración: {general_config}"
            )
            root.destroy()

        # Ahora `threshold_dict` contiene los valores seleccionados o los cargados
        print(threshold_dict)
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  Routine BL_5_SEMANTIC_CONTRAST
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    ImageComponent semantic_stim_2
      image [set every repeat] = $(contrast_path_0+contrast_path_1+contrast_path_2)
      pos = (0.0, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_22
      allowedKeys = 'space', 'right', 'left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_14
      disabled = True
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_23
      Code Type = Py
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      Begin Routine:
        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################

        contrast_threshold = threshold_dict['contrast_threshold']
        #semantic_stim_2.contrast = 0.5#contrast_threshold + contrast_threshold*offset_porcentual
        semantic_stim_2.contrast = contrast_threshold + contrast_threshold*semantic_contrast_offset/100

        logs_parametros_trial_9.alignText='left'
        logs_parametros_trial_9.anchorHoriz='left'

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False
      Each Frame:
        if general_config["logs"]:
                logs_parametros_trial_9.setText(
                f"Prueba 5 - Estímulos semánticos\n"
                f"Intento: {intento}\n"
                f"Excentricidad: {excentricidad}º\n"
                f"Tamaño Estímulo: {tamanyo:.2f}\n"
                f"Tipo: {respuesta}\n"
                f"Umbral detección contr.: {contrast_threshold}\n"
                f"Contraste: {contrast_threshold + contrast_threshold*semantic_contrast_offset/100}\n"
            )

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and respuesta == 'vivo': # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and respuesta == 'inerte': # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'a' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_10.setAutoDraw(False)
            dots_black_10.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if general_config["feedback"]:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_6, success)
            semantic_stim_2.setAutoDraw(False)
            show_noise(dots_white_10, dots_black_10, response_time, 0, feedback_txt_6) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_5.finished = True
    TextComponent logs_parametros_trial_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent right_arrow_2
      fillColor = white
      ori = 90
      pos = (0.5, 0)
      shape = arrow
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent left_arrow_2
      fillColor = white
      ori = -90
      pos = (-0.5, 0)
      shape = arrow
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent right_arrow_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = Ser vivo
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    TextComponent left_arrow_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = Inerte
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    DotsComponent dots_white_10
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_10
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_6
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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  Routine PUPILOMETRY_TASK_adaptation_period
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    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        win.color = "black"
      Each Frame:
        if not hasattr(thisExp, 'last_print_time'):
            thisExp.last_print_time = 0  # Inicializa la variable de tiempo

        if t - thisExp.last_print_time >= 1:  # Se ejecuta cada 10 segundos
            print(adaptation_time - int(t))
            thisExp.last_print_time = t  # Actualiza el último tiempo de impresión

        if t>adaptation_time:
            continueRoutine = False
    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PUPILOMETRY_TASK_flash
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    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Routine:
        win.color = color
        thisExp.addData(f"{color}StartTime", time.time())
      Each Frame:
        if t>flash_time:
            continueRoutine = False
      End Routine:
        win.color = "grey"
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flash_time
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    KeyboardComponent key_resp_24
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ET_VISUAL_SEARCH
    RoutineSettingsComponent ET_VISUAL_SEARCH
      disabled = True
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    CodeComponent end_of_routine_5
      Code Type = Py
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      Each Frame:
        if t>visual_search_image_time + visual_search_wait_time:
            continueRoutine = False
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    ImageComponent image_3
      image [set every repeat] = $path
      size = (1920*2/1920, 1080*2/1920)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = visual_search_image_time
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  Routine DVS_COHERENCE
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    DotsComponent dots_2
      coherence = noise_dots_coherence
      color = $noise_dots_color
      dir [set every frame] = noise_dots_direction
      dotLife = noise_dots_lifetime
      dotSize = noise_dots_size
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [field_size[0]+0.5,field_size[1]+0.5]
      nDots = noise_dots_no
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = noise_dots_speed
      startVal [time (s)] = 0.0
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    PolygonComponent dot_2
      fillColor = $dot_color
      lineColor = $dot_border_color
      shape = circle
      size = dot_size
      startVal [time (s)] = 0.0
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    CodeComponent code_26
      Code Type = Py
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      Begin Experiment:
        import numpy as np

        def move_dot_smooth(dot, dot_speed, field_size, current_angle, frames_in_direction, frame_count):
            """
            Mueve el punto 'dot' de forma suave dentro de los límites de la pantalla.

            dot: objeto visual de PsychoPy que se va a mover.
            dot_speed: velocidad del punto.
            field_size: tamaño del campo [ancho, alto] en unidades de PsychoPy.
            current_angle: ángulo actual de la dirección del punto.
            frames_in_direction: número de frames en los que el punto mantiene la misma dirección.
            frame_count: contador de frames que indica cuántos frames han pasado en la dirección actual.

            Returns:
            - new_angle: El ángulo actualizado para la próxima llamada.
            - frame_count: El contador de frames actualizado.
            """
            # Si hemos alcanzado el límite de frames para la dirección actual, cambiamos el ángulo
            if frame_count >= frames_in_direction:
                # Elegir un nuevo ángulo aleatorio cercano al actual para mantener la suavidad
                current_angle += np.random.uniform(-np.pi/8, np.pi/8)
                frame_count = 0  # Reiniciar el contador de frames en la nueva dirección
            else:
                frame_count += 1

            # Calcular el desplazamiento basado en el ángulo
            dx = dot_speed * np.cos(current_angle)
            dy = dot_speed * np.sin(current_angle)

            # Calcular la nueva posición
            new_x = dot.pos[0] + dx
            new_y = dot.pos[1] + dy

            # Verificar los límites de la pantalla y ajustar si es necesario
            if new_x < -field_size[0]/2:
                new_x = -field_size[0]/2
                current_angle = np.pi - current_angle  # Invertir dirección horizontal
            elif new_x > field_size[0]/2:
                new_x = field_size[0]/2
                current_angle = np.pi - current_angle

            if new_y < -field_size[1]/2:
                new_y = -field_size[1]/2
                current_angle = -current_angle  # Invertir dirección vertical
            elif new_y > field_size[1]/2:
                new_y = field_size[1]/2
                current_angle = -current_angle

            # Actualizar la posición del punto
            dot.pos = (new_x, new_y)

            return current_angle, frame_count

        def move_dot_lateral(dot, dot_speed, field_size, direction, frame_count):
            """
            Mueve el punto 'dot' de forma lineal lateral (derecha a izquierda) dentro de los límites del campo definido.

            dot: objeto visual de PsychoPy que se va a mover.
            dot_speed: velocidad del punto.
            field_size: tamaño del campo [ancho, alto] en unidades de PsychoPy.
            direction: dirección actual del movimiento, 1 para derecha y -1 para izquierda.
            frame_count: contador de frames que indica cuántos frames han pasado.

            Returns:
            - direction: La dirección actualizada para la próxima llamada.
            - frame_count: El contador de frames actualizado.
            """
            # Calcular el desplazamiento basado en la dirección
            dx = dot_speed * direction
            new_x = dot.pos[0] + dx
            new_y = dot.pos[1]  # Mantener y constante

            # Verificar los límites de la pantalla en el eje x y ajustar si es necesario
            if new_x < -field_size[0] / 2:
                new_x = -field_size[0] / 2
                direction *= -1  # Cambiar de dirección
            elif new_x > field_size[0] / 2:
                new_x = field_size[0] / 2
                direction *= -1  # Cambiar de dirección

            # Actualizar la posición del punto
            dot.pos = (new_x, new_y)

            return direction, frame_count + 1
      Begin Routine:
        current_angle = np.random.uniform(0, 2 * np.pi)  # Ángulo inicial aleatorio
        frame_count = 0
        frames_in_direction = 20  # Ajusta según la duración que desees para cada dirección
        direction = 1 # start value of direction to te right
        mode = 3 # behaviour of the stimuli and noise dots 1... 2... 3: Move noise with stimuli. 4:...
      Each Frame:
        # Dentro del bucle de cada frame

        #if  mode == 1: # movimiento random del estimulo. Cuando cambia la coherencia del ruido el estimulo se mantiene igual
        #    current_angle, frame_count = move_dot_smooth(dot_2, dot_speed, field_size, current_angle, frames_in_direction, frame_count)

        #elif mode == 2: # movimiento lateral del estimulo. Cuando cambia la coherencia del ruido el estimulo se mantiene igual
        #    direction, frame_count = move_dot_lateral(dot_2, dot_speed, field_size, direction, frame_count)

        if mode == 3:
            current_angle, frame_count = move_dot_smooth(dot_2, dot_speed, field_size, current_angle, frames_in_direction, frame_count)

            if noise_coherent_motion: # Move noise with stimuli
                if frame_count % frames_in_direction*5 == 0: # each 100 frames change angle
                    desvio = random.uniform(-20, 20)
                noise_dots_direction = math.degrees(current_angle) + desvio

        elif mode == 4:
            if noise_coherent_motion: # True
                direction, frame_count = move_dot_lateral(dot_2, dot_speed, field_size, direction, frame_count)
            else:
                current_angle, frame_count = move_dot_smooth(dot_2, dot_speed, field_size, current_angle, frames_in_direction, frame_count)

        # FLANCOS ASCENDENTE Y DESCENDENTE - Cambiar la coherencia del ruido segun el tiempo
        if t>10 and t<20:
            if not noise_coherent_motion:
                dots_2.setFieldCoherence(1)
                noise_coherent_motion = 1
                #noise_dots_direction = 90
                thisExp.addData(f"DVS_noise_coherent_motion_mode_3_StartTime", time.time())
        elif t>20 and t<30:
            if not noise_coherent_motion:
                dots_2.setFieldCoherence(1)
                noise_coherent_motion = 1
                noise_dots_direction = 0
                current_angle = 0
                direction = 1
                mode = 4
                thisExp.addData(f"DVS_noise_coherent_motion_mode_4_StartTime", time.time())
        else:
            if noise_coherent_motion:
                dots_2.setFieldCoherence(0)
                noise_coherent_motion = 0
                #noise_dots_direction = 0
            elif t>40:
                continueRoutine = False
    KeyboardComponent key_resp_25
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CONFIGURATION_ROUTINE
    RoutineSettingsComponent CONFIGURATION_ROUTINE
      desc = Loads screen config (defined in screen_config.json) and initializes global variables & functions
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    CodeComponent code_4
      Code Type = Py
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      Begin Experiment:
        periphereal_region_diameter = 0

        ################################
        ## CONFIGURACION MODIFICABLE: ##
        ################################
        nombre_pantalla = 'pantalla4'
        distancia_eyetracker = 0.65 # m
        alpha = angulo_region_central = 9 # º DEG
      Begin Routine:
        import json
        import math

        print(f"Participant info: {expInfo['participant']}")

        def calculate_diameter(excentricity, distance_to_screen, screen_height  = None):
            '''
            Calculates the diameter of circunference correspondint to the excentricity angle depending on the screen height and distance to screen.
            Params:
                -excentricity: angle of the excentricity in degrees
                -distance_to_screen: distance between patient and screen in meters
                -screen_height: height of the screen in meters (default is None, in this case the function will only return the diameter in unit that psychopy understands)
            Returns:
                -diameter_unit: unit diameter (this is the diameter that psychopy understands, it should match with the diameter in meters when used)
                -diameter_m: diameter in meters (this is the real diameter it should have in the screen)
            '''

            if screen_height == None:
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return None, diameter_m
            else:
                diameter_unit = (2 * distance_to_screen * math.sin(math.radians(excentricity)))/screen_height
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return diameter_unit, diameter_m

        def calcular_posicion_stim(angulo_grados, excentricidad, altura_pantalla):
            # primero calculo el diametro en pantalla correspondiente a la excentricidad
            diameter_unit, _ = calculate_diameter(excentricidad, 0.65, altura_pantalla)
            radius = diameter_unit / 2

            #hallo el punto donde mostrar el estimulo sobre la circunferencia de la excentricidad deseada
            theta = math.radians(angulo_grados)
            stim_x = radius * math.cos(theta)
            stim_y = radius * math.sin(theta)

            return stim_x, stim_y
        # Cargar el archivo JSON
        def cargar_configuracion(nombre_pantalla):
            with open('./config_data/screen_config.json', 'r') as file:
                config = json.load(file)

            # Seleccionar la configuración específica
            pantalla_config = config.get(nombre_pantalla)

            if pantalla_config:
                nombre = pantalla_config['nombre']
                tamanyo_pulgadas = pantalla_config['tamanyo']
                dim_y = pantalla_config['dim_y']
                frecuencia_monitor = pantalla_config['frecuencia']

                print(f'Se ha cargado la siguiente configuracion:\n'
                      f'Pantalla {nombre_pantalla} de {tamanyo_pulgadas} pulgadas con altura {dim_y} m')
                return nombre, tamanyo_pulgadas, dim_y,frecuencia_monitor
            else:
                print("Configuración de pantalla no encontrada.")
                return None, None, None, None  # Devolver None para cada valor esperado

        nombre, tamanyo_pulgadas, dim_y, frecuencia_monitor = cargar_configuracion(nombre_pantalla)


        if nombre:  # Comprobar que nombre no es None antes de usar las variables
            # Calcular el diámetro de la frontera de la periferia

            diameter_unit, diameter_m = calculate_diameter(alpha, distancia_eyetracker, dim_y)
            periphereal_region_diameter = diameter_unit

            log = f'Se ha cargado la configuracion de la {nombre_pantalla}:\n Pantalla {nombre} de {tamanyo_pulgadas} pulgadas con altura {dim_y} m y {frecuencia_monitor} Hz.'
            print(log)

        logs2.setText(
                     f'Se ha cargado la configuracion de la {nombre_pantalla}:\n Pantalla {nombre} de {tamanyo_pulgadas} pulgadas con altura {dim_y} m y {frecuencia_monitor} Hz.\n'
                     f'Para una distancia de {distancia_eyetracker} m entre el sujeto y la pantalla, el diametro debe ser de {diameter_unit:.2f} u.\n'
                     f'El diámetro equivalente es de {diameter_m:.2f} m'
                     )
    PolygonComponent periphereal_region_result
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      shape = circle
      size [set every repeat] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    PolygonComponent foveal_region_result
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent logs2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent time_daemon
      Code Type = Auto->JS
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      Each Frame:
        if t>3:
            continueRoutine = False
    CodeComponent GLOBAL_VARIABLES_AND_FUNCTIONS
      Code Type = Py
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      Before Experiment:
        # IMPORTS
        from psychopy import core
        import random
        import threading
        import time
        import pandas as pd
        import os

        # DIRECTORIES
        pretest_standard_thresholds_path = "./config_data/standard_thresholds.json"

        #GLOBAL VARIABLES

        # Grating config
        global grating_mask
        grating_mask = 'gauss'

        # MODULE 1: pretest - staircase test params
        n_reversals_to_average = 5
        stop_reversals = 6
        staircase_noise_duration = 0.5

        # MODULE 1: Experiment params
        stim_time = 2
        response_time = 0.5 # time to answer after stimuli disapears
        #global FEEDBACK
        #FEEDBACK = -1 # value changed in Begin Experiment
        global noise_type
        noise_type= 2 # 1: FULL WINDOW // 2: ONLY STIM. Value changed in Begin Experiment (GUI)
        noise_field_size = [1.75,1]
        noise_dots = 25000
        grating_size = (0.5,0.5)

        continueRoutine_ref = [True]

        # spatial frequency images
        sf_images_cpd_ranges = [(1, 3), (4, 6), (10, 18)]  # Ejemplo de filtros paso banda

        # MODULE 2:
        # Eye Tracking Resting State
        eye_tracking_resting_state_time = 60
        eye_tracking_resting_state_background_color = 'black'

        # Visual Search params
        visual_search_image_time = 5.5
        visual_search_wait_time = 1

        # Eye Tracking DVS task params
        dot_size            = 10/1000 # change this value to make it similar to the other dots
        noise_dots_size     = 15 #dot_size

        noise_dots_no       = 700
        dot_coherence       = 0.0 # do not touch this
        #noise_dots_direction= 45.0
        #noise_coherent_motion = 0.0 # bool

        dot_speed           = 0.001
        noise_dots_speed    = dot_speed

        dot_border_color    = 'red'#border color of the main dot
        dot_color           = 'white'
        noise_dots_color    = 'white'

        noise_dots_lifetime = 200
        field_size          = [1.5,1]

        # MODULE 3:
        # Pupilometry params: --> FROM CSV!!
        #adaptation_time = 10#10*60 # 10 MINUTES
        #flash_time = 1 # 1 s
        #rest_time = 10 # 30 s

        # Fearful & affective images params
        autonomic_response_basal_time = 1#5
        autonomic_response_image_time = 5
        autonomic_response_recovery_time = 1#5

        # FUNCTIONS
        def comprobar_respuesta(orientacion):
            keys = event.getKeys()
            if ('right' in keys and orientacion == 45) or ('left' in keys and orientacion == 135): # Acierto:
                success                 = True
            elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
                success                 = False
            else:
                success = None
            return success

        def show_noise(dots_white, dots_black, duration, orientacion = None, feedback_txt = None):

            if noise_type == 1:
                dots_white.fieldShape = 'square'
                dots_black.fieldShape = 'square'
                dots_white.setSize(noise_field_size)
                dots_black.setSize(noise_field_size)

            elif noise_type == 2:
                dots_white.fieldShape = 'circle'
                dots_black.fieldShape = 'circle'
                dots_white.setSize(grating_size)
                dots_black.setSize(grating_size)

            # Habilitar los puntos de ruido
            dots_white.setAutoDraw(True)
            dots_black.setAutoDraw(True)

            noise_timer = core.Clock()
            noise_timer.reset()

            # Mostrar el ruido durante el tiempo de duración especificado
            while noise_timer.getTime() < duration:
                win.flip()  # Actualiza la ventana en cada frame para mantener la animación
                #igual se puede asignar una duración x al ruido y no tener que hacer esta guarrada
                # show feedback during noise
                if (general_config["feedback"] == True) and (orientacion is not None) and (feedback_txt is not None):
                    success = comprobar_respuesta(orientacion)
                    if success is not None:
                        show_feedback(feedback_txt, success)

            # Desactivar los puntos de ruido
            dots_white.setAutoDraw(False)
            dots_black.setAutoDraw(False)

        def get_random_orientation():
            return random.choice([45, 135])

        def get_threshold(test_var_name : str, results_csv_path):
            data = pd.read_csv(results_csv_path)

            # Filtrar filas con reversals
            reversal_data = data[data['reversals'] > 0]

            threshold = reversal_data[test_var_name].tail(n_reversals_to_average).mean()

            return threshold

        def show_feedback(feedback_txt, success):
            if success != -1 and success:
                feedback_txt.setText("✓")
            elif success != -1 and not success:
                feedback_txt.setText("x")
            else:
                feedback_txt.setText("")

            # Función interna para borrar el texto después del ruido
            def clear_text():
                time.sleep(staircase_noise_duration)
                feedback_txt.setText("")  # Limpia el texto

            # Crear y lanzar el hilo para que borre el texto
            t = threading.Thread(target=clear_text)
            t.start()  # Inicia el hilo para que la ejecución principal continúe

            return


        def load_sf():
            archivo_sf = f"./data/{expInfo['participant']}/sf_staircase_data_{expInfo['participant']}.csv"
            try:
                test_sf = get_threshold('spatial_frequency', archivo_sf)
                print(f'Se ha cargado la frecuencia espacial testada con un valor de {test_sf}')
                return test_sf

            except FileNotFoundError:
                print(f'Error: El archivo {archivo_sf} no fue encontrado.')
                return -1

            except Exception as e:
                print(f'Error al cargar la frecuencia espacial del archivo {archivo_sf}: {str(e)}')
                return -1

        import matplotlib.pyplot as plt

        def generate_staircase_test_graph(test_var_name: str, results_csv_path: str):
            # Comprobar si el archivo existe
            if not os.path.exists(results_csv_path):
                print(f"[AVISO] No se encontró el archivo: {results_csv_path}")
                return -1

            data = pd.read_csv(results_csv_path)

            # Filtrar filas con reversals
            reversal_data = data[data['reversals'] > 0]

            # Calcular el umbral como la media de las últimas n inversiones
            n_reversals_to_average = 9
            threshold = reversal_data[test_var_name].tail(n_reversals_to_average).mean()

            # Preparar carpeta de salida
            input_dir = os.path.dirname(results_csv_path)
            output_dir = os.path.join(input_dir, 'processed_data')
            os.makedirs(output_dir, exist_ok=True)

            # Crear nombre de archivo de salida
            filename = f'staircase_{test_var_name}.png'
            output_path = os.path.join(output_dir, filename)

            # Graficar
            plt.figure(figsize=(10, 6))
            plt.plot(data['trial'], data[test_var_name], marker='o', linestyle='-', label=f'Stimulus {test_var_name}')
            plt.axhline(y=threshold, color='r', linestyle='--', label=f'Threshold = {threshold:.3f}')

            plt.xlabel('Number of Trials')
            plt.ylabel(f'Stimulus {test_var_name}')
            plt.title(f'Stimulus {test_var_name} Across Trials')
            plt.legend()
            plt.grid(True)

            # Guardar gráfico
            plt.savefig(output_path, bbox_inches='tight')
            plt.close()

            print(f"Umbral estimado: {threshold:.3f}")
            print(f"Gráfico guardado en: {output_path}")

            return threshold
      Begin Experiment:
        stop_reversals = 5
        continueRoutine_ref = [True]

        global general_config, noise_type, grating_mask

        FEEDBACK = general_config["feedback"]
        if general_config["full_screen_noise"]: # 1: FULL WINDOW // 2: ONLY STIM.
            noise_type = 1
            print("Stablished noise type 1")
        else:
            noise_type = 2
            print("Stablished noise type 2")

        grating_mask = general_config["gabor_texture"]


        # DVS
        noise_dots_coherence = 0.0
        noise_coherent_motion = 0.0 # bool
        noise_dots_direction= 45.0
        desvio = 0
      End Experiment:
        #staircase_data_filename = f"./data/{expInfo['participant']}/sf_staircase_data_{expInfo['participant']}.csv"
        #generate_staircase_test_graph(results_csv_path=staircase_data_filename, test_var_name='spatial_frequency')
        #staircase_data_filename = f"./data/{expInfo['participant']}/contrast_staircase_data_{expInfo['participant']}.csv"
        #generate_staircase_test_graph(results_csv_path=staircase_data_filename, test_var_name='contrast')
        #staircase_data_filename = f"./data/{expInfo['participant']}/saturation_staircase_data_{expInfo['participant']}_green.csv"
        #generate_staircase_test_graph(results_csv_path=staircase_data_filename, test_var_name='saturation')
        #staircase_data_filename = f"./data/{expInfo['participant']}/saturation_staircase_data_{expInfo['participant']}_red.csv"
        #generate_staircase_test_graph(results_csv_path=staircase_data_filename, test_var_name='saturation')
    CodeComponent FPS_counter
      Code Type = Auto->JS
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      Begin Routine:
        tiempo_anterior = 0
        fps = 0  # Variable para almacenar el FPS
      Each Frame:
        tiempo_actual = t
        delta_tiempo = tiempo_actual - tiempo_anterior # tiempo desde el frame anterior

        if delta_tiempo > 0:
            fps = 1.0 / delta_tiempo  # Frecuencia: (1 / tiempo entre frames) (Hz)

        tiempo_anterior = tiempo_actual

        FPS_logs.text = f"FPS: {fps:.2f}"  # Mostrar con 2 decimales
    CodeComponent DATA_MANAGEMENT
      Code Type = Py
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      Before Experiment:
        import json

        # TEMPORAL --> Se debe cargar de memoria o inicializar con valores nulos
        '''
        threshold_values = {
            'spatial_frequency_threshold': 53.98,   # Flotante
            'flicker_threshold': 40.0,              # Flotante
            'contrast_threshold': 0.002,            # Flotante
            'color_threshold': {                    # Diccionario para colores con valores flotantes
                'red': 0.93,
                'green': 3.44
            }
        }

        threshold_values = {
            'spatial_frequency_threshold': None,  # Flotante
            'flicker_threshold': None,            # Flotante
            'contrast_threshold': None,           # Flotante
            'color_threshold': {}                 # Diccionario para colores con valores flotantes
        }
        '''
        ''' MODIFICAR EL DICCIONARIO
        threshold_dict['spatial_frequency_threshold'] = spatial_frequency
        threshold_dict['flicker_threshold'] = flicker
        threshold_dict['contrast_threshold'] = contrast
        threshold_dict['color_threshold'][color_name] = color_value
        '''
      Begin Experiment:
        # Función para mostrar el diccionario completo al final del test
        def display_thresholds(threshold_dict):
            print("Valores de Umbrales del Paciente:")
            print(f"Frecuencia Espacial: {threshold_dict['spatial_frequency_threshold']}")
            print(f"Flicker: {threshold_dict['flicker_threshold']}")
            print(f"Contraste: {threshold_dict['contrast_threshold']}")
            print("Umbrales de Color:")
            for color, value in threshold_dict['color_threshold'].items():
                print(f"{color}: {value}")

        # Función para guardar el diccionario en un archivo JSON
        def save_thresholds_to_json(threshold_dict, filename=f"./data/{expInfo['participant']}/thresholds_{expInfo['participant']}.json"):
            with open(filename, 'w') as f:
                json.dump(threshold_dict, f, indent=4)  # indent para que el JSON sea legible
            print(f"Diccionario guardado en {filename}")

        # Función para cargar el diccionario desde un archivo JSON
        def load_thresholds_from_json(filename=f"./data/{expInfo['participant']}/thresholds_{expInfo['participant']}.json"):
            if not os.path.exists(filename):
                # Archivo no encontrado
                return -1
            else:
                # Archivo encontrado y valores cargados
                with open(filename, 'r') as f:
                    threshold_dict = json.load(f)
                print(f"Diccionario cargado desde {filename}")
                return threshold_dict
    TextComponent FPS_logs
      letterHeight = 0.025
      pos = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    CodeComponent MODULE_SELECTION_GUI
      Code Type = Py
      Before Experiment:
        import tkinter as tk
        from tkinter import ttk

        #participant_id = f"{randint(0, 999999):06.0f}"

        # Diccionario de configuración general
        global general_config

        general_config = {
            "feedback": False,
            "logs": False,
            "full_screen_noise": False,
            "gabor_texture": None,
            "pretest_standard_values": True
        }

        # Diccionario de módulos y tests con el nuevo parámetro "enabled"
        modules = {
            "module_1": {
                "name": "MODULE 1: Spatial Vision (low level-stimuli and semantic stimuli)",
                "selected": False,
                "tests": {
                    "pretest": {"name": "Threshold estimation test", "selected": False, "enabled": True},
                    "test_1": {"name": "1.Spatial Frequency test", "selected": False, "enabled": True},
                    "test_2": {"name": "2.Color Vision test", "selected": False, "enabled": True},
                    "test_3": {"name": "3.Contrast Sensitivity test", "selected": False, "enabled": True},
                    "test_4": {"name": "4.Semantic Stim Spatial Frequency test", "selected": False, "enabled": True,
                        "config": {
                            "screen_width_cm": None,
                            "distance_to_screen_cm": None,
                            "screen_resolution_dpi": None}
                    },
                    "test_5": {"name": "5.Semantic Stim Contrast Sensitivity test", "selected": False, "enabled": True},
                    "test_6": {"name": "6.Semantic Stim Color Vision test", "selected": False, "enabled": True}
                }
            },
            "module_2": {
                "name": "MODULE 2: Dynamic Vision and Eye Tracking",
                "selected": False,
                "tests": {
                    "test_1": {"name": "1.Fixation stability test (resting state eye-tracking test)", "selected": False, "enabled": True},
                    "test_2": {"name": "2.Flicker fusion threshold test", "selected": False, "enabled": True},
                    "test_3": {"name": "3.Saccadic and antisaccadic movement eye-tracking test", "selected": False, "enabled": True},
                    "test_4": {"name": "4.Smooth pursuit eye-tracking test", "selected": False, "enabled": True},
                    "test_5": {"name": "5.Visual search eye-tracking test", "selected": False, "enabled": True}
                }
            },
            "module_3": {
                "name": "MODULE 3: Dynamic Pupilometry and Autonomic Response (sweating and Heart Rate Variability) to Visual Stimuli",
                "selected": False,
                "tests": {
                    "test_1": {"name": "1.Elementary full-field achromatic and chromatic light stimulus", "selected": False, "enabled": True},
                    "test_2": {"name": "2.Fearful and affective semantic stimuli (images)", "selected": False, "enabled": True}
                }
            }
        }

        def update_module_from_tests(module_id):
            """
            Marca automáticamente el módulo como seleccionado si al menos un test está seleccionado.
            """
            any_test_selected = any(test_var.get() for test_var in test_vars[module_id].values())
            module_vars[module_id].set(any_test_selected)

        def update_tests(module_id, var):
            """
            Actualiza los estados de los tests al seleccionar/deseleccionar un módulo.
            """
            is_selected = var.get()
            for test_id, test in modules[module_id]["tests"].items():
                if test["enabled"]:
                    test_vars[module_id][test_id].set(is_selected)

        def create_tooltip(widget, text):
            tooltip = tk.Toplevel(widget)
            tooltip.wm_overrideredirect(True)
            tooltip.withdraw()
            label = tk.Label(tooltip, text=text, background="#ffffe0", relief="solid", borderwidth=1, font=("tahoma", 8))
            label.pack()

            def enter(event):
                x = widget.winfo_rootx() + 20
                y = widget.winfo_rooty() + 20
                tooltip.wm_geometry(f"+{x}+{y}")
                tooltip.deiconify()

            def leave(event):
                tooltip.withdraw()

            widget.bind("<Enter>", enter)
            widget.bind("<Leave>", leave)

        def save_selection():
            """
            Guarda los valores seleccionados en el diccionario original y cierra la ventana.
            """
            for module_id, module in modules.items():
                module["selected"] = module_vars[module_id].get()
                for test_id, test in module["tests"].items():
                    test["selected"] = test_vars[module_id][test_id].get()

                    # Guardar los campos especiales del test_4 del módulo 1
                    if module_id == "module_1" and test_id == "test_4":
                        test.setdefault("config", {})
                        test["config"]["screen_width_cm"] = width_var.get()
                        test["config"]["distance_to_screen_cm"] = distance_var.get()
                        test["config"]["screen_resolution_dpi"] = dpi_var.get()

            # Guardar valores de configuración general
            general_config["feedback"] = feedback_var.get()
            general_config["logs"] = logs_var.get()
            general_config["full_screen_noise"] = noise_var.get()
            general_config["gabor_texture"] = mask_var.get()
            general_config["pretest_standard_values"] = pretest_values_var.get()

            #global participant_id
            #participant_id = dni_var.get()
            #expInfo['participant'] = participant_id

            root.destroy()


        ##############################################################################
        ##____________MAIN WINDOW____________####____________MAIN WINDOW____________##
        ##############################################################################

        # Crear la ventana principal
        root = tk.Tk()
        root.title("Select Modules and Tests")

        # Variables de control
        module_vars = {}
        test_vars = {}

        # Frame superior para entrada de DNI, botón y mensaje de estado
        top_frame = ttk.Frame(root)
        top_frame.pack(side="top", fill="x", padx=10, pady=10)

        #dni_label = ttk.Label(top_frame, text="DNI:")
        #dni_label.pack(side="left")

        #dni_var = tk.StringVar()
        #dni_entry = ttk.Entry(top_frame, textvariable=dni_var)
        #dni_entry.pack(side="left", padx=5)

        #def comprobar_dni():
            # Aquí podrías poner tu lógica real de comprobación con una BBDD o archivo
            # Por ahora mostramos el texto "Datos encontrados"
        #    status_label.config(text="Datos encontrados", foreground="green")

        #comprobar_btn = ttk.Button(top_frame, text="Comprobar", command=comprobar_dni)
        #comprobar_btn.pack(side="left", padx=5)

        # Etiqueta que se actualizará cuando se pulse el botón "Comprobar"
        status_label = ttk.Label(top_frame, text="", foreground="green")
        status_label.pack(side="left", padx=10)

        # Crear widgets dinámicos
        for module_id, module in modules.items():
            module_vars[module_id] = tk.BooleanVar(value=module["selected"])
            module_checkbox = ttk.Checkbutton(
                root, text=module["name"], variable=module_vars[module_id],
                command=lambda mid=module_id, var=module_vars[module_id]: update_tests(mid, var)
            )
            module_checkbox.pack(anchor="w", padx=10, pady=5)

            test_vars[module_id] = {}
            for test_id, test in module["tests"].items():
                test_vars[module_id][test_id] = tk.BooleanVar(value=test["selected"])
                test_checkbox = ttk.Checkbutton(
                    root, text=test["name"], variable=test_vars[module_id][test_id],
                    command=lambda mid=module_id: update_module_from_tests(mid),
                    state=tk.NORMAL if test["enabled"] else tk.DISABLED
                )
                test_checkbox.pack(anchor="w", padx=30)

                #######################################################
                ## Campos de frecuencia espacial --> modulo 1 test 4

                if module_id == "module_1" and test_id == "test_4":
                    width_var = tk.StringVar()
                    distance_var = tk.StringVar()
                    dpi_var = tk.StringVar()

                    width_frame = ttk.Frame(root)
                    width_frame.pack(anchor="w", padx=60)
                    width_label = ttk.Label(width_frame, text="Ancho pantalla (cm)")
                    width_label.pack(side="left")
                    width_entry = ttk.Entry(width_frame, textvariable=width_var, width=10)
                    width_entry.pack(side="left", padx=5)
                    info1 = ttk.Label(width_frame, text="ⓘ", foreground="blue")
                    info1.pack(side="left")
                    create_tooltip(info1, "Ancho físico de la pantalla en centímetros.")
                    width_entry.insert(0, "40")

                    distance_frame = ttk.Frame(root)
                    distance_frame.pack(anchor="w", padx=60)
                    distance_label = ttk.Label(distance_frame, text="Distancia a pantalla (cm)")
                    distance_label.pack(side="left")
                    distance_entry = ttk.Entry(distance_frame, textvariable=distance_var, width=10)
                    distance_entry.pack(side="left", padx=5)
                    info2 = ttk.Label(distance_frame, text="ⓘ", foreground="blue")
                    info2.pack(side="left")
                    create_tooltip(info2, "Distancia desde el observador a la pantalla en centímetros.")
                    distance_entry.insert(0, "57")

                    dpi_frame = ttk.Frame(root)
                    dpi_frame.pack(anchor="w", padx=60)
                    dpi_label = ttk.Label(dpi_frame, text="Resolución (DPI)")
                    dpi_label.pack(side="left")
                    dpi_entry = ttk.Entry(dpi_frame, textvariable=dpi_var, width=10)
                    dpi_entry.pack(side="left", padx=5)
                    info3 = ttk.Label(dpi_frame, text="ⓘ", foreground="blue")
                    info3.pack(side="left")
                    create_tooltip(info3, "Resolución de la pantalla en puntos por pulgada (DPI).\nCalcula el valor en https://pixelcalculator.com/es")
                    dpi_entry.insert(0, "244")


        # Checkboxes para configuración general
        feedback_var = tk.BooleanVar(value=general_config["feedback"])
        logs_var = tk.BooleanVar(value=general_config["logs"])
        noise_var = tk.BooleanVar(value=general_config["full_screen_noise"])
        mask_var = tk.StringVar(value="gauss")  # Valor por defecto
        pretest_values_var = tk.BooleanVar(value=general_config["pretest_standard_values"])

        feedback_checkbox = ttk.Checkbutton(root, text="Enable Feedback", variable=feedback_var)
        feedback_checkbox.pack(anchor="w", padx=10, pady=5)

        logs_checkbox = ttk.Checkbutton(root, text="Enable Logs", variable=logs_var)
        logs_checkbox.pack(anchor="w", padx=10, pady=5)

        noise_checkbox = ttk.Checkbutton(root, text="Full Screen Noise", variable=noise_var)
        noise_checkbox.pack(anchor="w", padx=10, pady=5)

        mask_combobox = ttk.Combobox(root, textvariable=mask_var, values=["gauss", "circle"], state="readonly")
        mask_combobox.pack(anchor="w", padx=10, pady=5)

        noise_checkbox = ttk.Checkbutton(root, text="Use standard values for pretest", variable=pretest_values_var)
        noise_checkbox.pack(anchor="w", padx=10, pady=5)

        # Botón para guardar y cerrar
        save_button = ttk.Button(root, text="Continue", command=save_selection)
        save_button.pack(pady=20)

        # Ejecutar la ventana
        root.mainloop()

        # Mostrar toda la configuración por consola
        print("\n--- Configuración general ---")
        print(general_config)

        print("\n--- Configuración de módulos y tests ---")
        for module_id, module in modules.items():
            print(f"\n{module['name']} (selected: {module['selected']})")
            for test_id, test in module["tests"].items():
                print(f"  - {test['name']} (selected: {test['selected']})")
                if "config" in test:
                    for key, val in test["config"].items():
                        print(f"      {key}: {val}")
  Routine SACCADE_TASK
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    CodeComponent code_12
      Code Type = Py
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      Begin Experiment:
        # GLOBAL VARIABLES: POSITION OF FIXATION POINT AND PERIPHEREAL STIMULI POSITION

        #3 POSSIBLE POSITIONS:
        FIXATION_POS = (0,0)
        PERIPHEREAL_POS_L = (-0.75,0)
        PERIPHEREAL_POS_R = (0.75,0)

        IPAST_stim_position = (0,0) # ESTE VALOR ES VARIABLE (CAMBIA SEGUN LA SECUENCIA IPAST)

        # OTHER
        REST_TIME = 1
        IPAST_fixation_cross_size = (0.05, 0.05)
      Begin Routine:
        # CHANGE BACKGROUND COLOR TO BALCK
        win.color = "black"

        # SHOW STIMULI WITH COLOR
        if task_type == "saccade":
            polygon_5.color = "green"
        elif task_type == "antisaccade":
            polygon_5.color = "red"
      Each Frame:
        # SEQUENCE

        # SHOW / HIDE STIMULI
        if t> 3.5 + REST_TIME: # End of Routine
            polygon_5.setAutoDraw(False)
            continueRoutine = False

        elif t>1.2 + REST_TIME: # Saccade time
            if alignment == "l":
                IPAST_stim_position = PERIPHEREAL_POS_L
            elif alignment == "r":
                IPAST_stim_position = PERIPHEREAL_POS_R
            polygon_5.color = "white"
            polygon_5.setAutoDraw(True)

        elif t>1 + REST_TIME:
            polygon_5.setAutoDraw(False)

        elif t>0 + REST_TIME:
            polygon_5.setAutoDraw(True)
            IPAST_stim_position = FIXATION_POS

        else: # wait some time between trials
            polygon_5.setAutoDraw(False)

        #text_2.text = f"Time: {t:.2f}"
    PolygonComponent cross_1
      fillColor = white
      pos = IPAST_stim_position
      shape = cross
      size = IPAST_fixation_cross_size
      startVal [time (s)] = 0.0
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    PolygonComponent cross_2
      fillColor = white
      pos = PERIPHEREAL_POS_L
      shape = cross
      size = IPAST_fixation_cross_size
      startVal [time (s)] = 0.0
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    PolygonComponent cross_3
      fillColor = white
      pos = PERIPHEREAL_POS_R
      shape = cross
      size = IPAST_fixation_cross_size
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_5
      fillColor = white
      pos [set every frame] = IPAST_stim_position
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      disabled = True
      letterHeight = 0.05
      pos = (0.5, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_27
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine ET_RESTING_STATE
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    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        win.color = eye_tracking_resting_state_background_color

        last_second = None
      Each Frame:
        if t>eye_tracking_resting_state_time:
            continueRoutine = False

        # Solo actualizar el texto si ha cambiado el segundo
        current_second = int(t)
        if general_config["logs"] and current_second != last_second:
            text_3.setText(str(eye_tracking_resting_state_time - current_second))
            last_second = current_second  # Actualizar el último segundo registrado

        elif general_config["logs"] == False and current_second != last_second:
            print(str(eye_tracking_resting_state_time - current_second))
            last_second = current_second
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine ET_SCREEN_POINT_TASK
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    CodeComponent code_27
      Code Type = Py
      Begin Routine:
        win.color = eye_tracking_resting_state_background_color
      Each Frame:
        if t>eye_tracking_resting_state_time:
            continueRoutine = False




        # Solo actualizar el texto si ha cambiado el segundo
        current_second = int(t)
        if general_config["logs"] and current_second != last_second:
            text_5.setText(str(eye_tracking_resting_state_time - current_second))
            last_second = current_second  # Actualizar el último segundo registrado

        elif general_config["logs"] == False and current_second != last_second:
            print(str(eye_tracking_resting_state_time - current_second))
            last_second = current_second
    TextComponent text_5
      letterHeight = 0.05
      pos = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_9
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_26
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VISUAL_SEARCH_RINGS
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    CodeComponent code_28
      Code Type = Py
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      Begin Routine:
        import re

        win.color = "white"

        def calcular_relacion_aspecto(ruta_archivo):
            """
            Extrae los números del primer paréntesis en el nombre del archivo y calcula la relación de aspecto.

            :param ruta_archivo: Ruta completa o nombre del archivo (str).
            :return: Relación de aspecto (float).
            """
            # Extraer solo el nombre del archivo (ignorar la ruta previa)
            nombre_archivo = ruta_archivo.split("\\")[-1] if "\\" in ruta_archivo else ruta_archivo.split("/")[-1]

            # Buscar el primer paréntesis y extraer los números
            match = re.search(r"\((\d+),\s*(\d+)\)", nombre_archivo)
            if match:
                filas = int(match.group(1))
                columnas = int(match.group(2))
                # Calcular la relación de aspecto (filas/columnas)
                relacion_aspecto = filas / columnas
                return relacion_aspecto
            else:
                raise ValueError("No se encontraron números en el primer paréntesis del nombre del archivo.")

        relacion_aspecto = calcular_relacion_aspecto(ruta_relativa)
        print(f"Relación de aspecto: {relacion_aspecto:.2f}")
      Each Frame:
        if t>visual_search_image_time + visual_search_wait_time:
            continueRoutine = False

        #if t>visual_search_image_time:
        #    rings_img.autoDraw=False
    ImageComponent rings_img
      image [set every repeat] = $ruta_relativa
      interpolate = nearest
      size [set every repeat] = (1.5, 1.5 / relacion_aspecto)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = visual_search_image_time
      texture resolution = 512
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    KeyboardComponent key_resp_28
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent GP_data_adq_backend_3
      Code Type = Py
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      Begin Experiment:
        def convert_to_psychopy_units(FPOGX, FPOGY, screen_bounds):
            """
            Convierte las coordenadas normalizadas de Gazepoint a coordenadas centradas
            en el sistema de PsychoPy.

            Parámetros:
            - FPOGX: Coordenada X normalizada de Gazepoint (0 a 1)
            - FPOGY: Coordenada Y normalizada de Gazepoint (0 a 1)
            - screen_bounds: Límites de la pantalla en PsychoPy, donde los valores
              se definen como (x_min, y_max, x_max, y_min)

            Retorna:
            - Coordenadas X y Y centradas en el sistema de PsychoPy
            """

            x_min, y_max, x_max, y_min = screen_bounds

            # Mapeo de FPOGX (0.0 a 1.0) a PsychoPy (x_min a x_max)
            x_psychopy = x_min + (FPOGX * (x_max - x_min))

            # Mapeo de FPOGY (0.0 a 1.0) a PsychoPy (y_min a y_max)
            y_psychopy = -(y_min + (FPOGY * (y_max - y_min)))

            return x_psychopy, y_psychopy


        screen_bounds = (-0.89, 0.5, 0.89, -0.5)  # Definir los límites de la pantalla en unidades PsychoPy (x_min, y_max, x_max, y_min)
      Begin Routine:
        import socket

        # Host machine IP
        HOST = '127.0.0.1'
        PORT = 4242
        ADDRESS = (HOST, PORT)

        # Variable global para controlar si el gaze está disponible
        gaze_enabled = True
        gaze_position = (0, 0)  # valor por defecto

        try:
            # Intentar conectar al eye tracker
            s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
            s.connect(ADDRESS)

            # Enviar comandos de inicio
            s.send(str.encode('<SET ID="ENABLE_SEND_CURSOR" STATE="1" />\r\n'))
            s.send(str.encode('<SET ID="ENABLE_SEND_POG_FIX" STATE="1" />\r\n'))
            s.send(str.encode('<SET ID="ENABLE_SEND_DATA" STATE="1" />\r\n'))

        except Exception as e:
            gaze_enabled = False
            print("WARNING: Eye tracker no detectado. No se visualizará el gaze en pantalla.")
            print(f"Detalles del error: {e}")
      Each Frame:
        if gaze_enabled:
            try:
                # Recibir datos
                rxdat = s.recv(1024)
                data_r = bytes.decode(rxdat)

                FPOGX = -1
                FPOGY = -1

                datalist = data_r.split(" ")

                for el in datalist:
                    if (el.find("FPOGX") != -1):
                        FPOGX = float(el.split("\"")[1])
                    if (el.find("FPOGY") != -1):
                        FPOGY = float(el.split("\"")[1])

                x_psychopy, y_psychopy = convert_to_psychopy_units(FPOGX, FPOGY, screen_bounds)
                gaze_position = (x_psychopy, y_psychopy)

            except Exception as e:
                print("ERROR al leer datos del eye tracker:", e)
                gaze_position = (0, 0)
        else:
            # Opcional: puedes definir una posición neutral si no hay eye tracker
            gaze_position = (-1, -1)
      End Routine:
        s.close()
    PolygonComponent gaze
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos [set every frame] = gaze_position
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine FEARFUL_AND_AFFECTIVE_IMAGES_TASK
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    CodeComponent code_29
      Code Type = Py
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      Begin Routine:
        def calcular_relacion_aspecto(ruta_archivo):
            """
            Calcula la relación de aspecto de una imagen a partir de su anchura y altura.

            :param ruta_archivo: Ruta completa de la imagen (str).
            :return: Relación de aspecto (float).
            """
            try:
                with Image.open(ruta_archivo) as img:
                    anchura, altura = img.size
                    return anchura / altura
            except Exception as e:
                raise ValueError(f"Error al abrir la imagen: {e}")

        relacion_aspecto = calcular_relacion_aspecto(ceaco_relative_path)

        if general_config["logs"]:
            logs_29.text = f"Img path: {ceaco_relative_path}"
      Each Frame:
        if t>autonomic_response_basal_time + autonomic_response_image_time + autonomic_response_recovery_time:
            continueRoutine = False
    ImageComponent img
      image [set every repeat] = $ceaco_relative_path
      interpolate = nearest
      size [set every repeat] = (relacion_aspecto,1)
      startVal [time (s)] = autonomic_response_basal_time
      stopVal [duration (s)] = autonomic_response_image_time
      texture resolution = 512
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    KeyboardComponent key_resp_29
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent logs_29
      letterHeight = 0.025
      pos = (0.5, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine SF_DATASET_GENERATOR
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    CodeComponent SPATIAL_FREQUENCY_FILTERS_CODE_2
      Code Type = Py
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      Begin Routine:
        import numpy as np
        from skimage import io, img_as_ubyte

        def cpd_to_radius(cpd, image_width, screen_width_cm, distance_to_screen_cm, dpi):
            """Convert CPD to radius for the Fourier transform."""
            pixels_per_cm = dpi / 2.54  # DPI to px/cm
            pixels_per_degree = (distance_to_screen_cm * np.tan(np.radians(1))) * pixels_per_cm
            cycles_per_pixel = cpd / pixels_per_degree
            return int(cycles_per_pixel * (image_width / 2))

        def normalize_image(image):
            """Normalizes the image to a range of 0-255 (uint8)."""
            image_normalized = np.real(image)
            image_normalized -= image_normalized.min()
            image_normalized /= image_normalized.max()
            return img_as_ubyte(image_normalized)

        def bandpass_filter_image(image, mask, min_cpd, max_cpd, image_width, screen_width_cm, distance_to_screen_cm, dpi):
            """Aplica un filtro paso banda entre min_cpd y max_cpd."""
            min_radius = cpd_to_radius(min_cpd, image_width, screen_width_cm, distance_to_screen_cm, dpi)
            max_radius = cpd_to_radius(max_cpd, image_width, screen_width_cm, distance_to_screen_cm, dpi)

            # Fourier Transform
            f_transform = np.fft.fft2(image * mask)
            f_transform_shifted = np.fft.fftshift(f_transform)

            # Crear máscara paso banda
            rows, cols = image.shape
            crow, ccol = rows // 2, cols // 2
            y, x = np.ogrid[:rows, :cols]
            distance_squared = (x - ccol) ** 2 + (y - crow) ** 2

            bandpass_mask = np.logical_and(distance_squared >= min_radius**2, distance_squared <= max_radius**2).astype(float)

            # Aplicar filtro
            bandpass_frequencies = f_transform_shifted * bandpass_mask

            # Transformada inversa
            filtered_image = np.fft.ifft2(np.fft.ifftshift(bandpass_frequencies))

            return normalize_image(filtered_image)

        def process_image_bandpass(image, mask, cpd_ranges, output_dir, image_file, image_width):
            """Aplica filtros paso banda con rangos de CPD y guarda imágenes."""
            for (min_cpd, max_cpd) in cpd_ranges:
                band_output_dir = os.path.join(output_dir, f"bandpass_{min_cpd}_{max_cpd}_cpd")
                os.makedirs(band_output_dir, exist_ok=True)

                filtered_image = bandpass_filter_image(
                    image, mask, min_cpd, max_cpd, image_width,
                    screen_width_cm, distance_to_screen_cm, screen_resolution_dpi
                )

                io.imsave(os.path.join(band_output_dir, f"{image_file}"), filtered_image) #keep original name
                print(f"Processed {image_file} with CPD range {min_cpd}-{max_cpd}")

        def extract_spatial_frequencies_bandpass(input_dir, generated_imgs_dir, cpd_ranges):
            for root, _, files in os.walk(input_dir):
                output_dir = generated_imgs_dir#os.path.join(root, "Processed_Bandpass_SF")
                os.makedirs(output_dir, exist_ok=True)

                for image_file in files:
                    if image_file.endswith(('.png', '.jpg', '.jpeg', '.bmp')):
                        image_path = os.path.join(root, image_file)
                        image = io.imread(image_path, as_gray=True)
                        mask = np.ones_like(image)

                        process_image_bandpass(image, mask, cpd_ranges, output_dir, image_file, image.shape[1])


        # testtttt
        print("\n--- Configuración de módulos y tests ---")
        for module_id, module in modules.items():
            print(f"\n{module['name']} (selected: {module['selected']})")
            for test_id, test in module["tests"].items():
                print(f"  - {test['name']} (selected: {test['selected']})")
                if "config" in test:
                    for key, val in test["config"].items():
                        print(f"      {key}: {val}")



        # TENGO QUE AÑADIR ALGO COMO [CONFIG]

        screen_width_cm         = float(modules["module_1"]["tests"]["test_4"]["config"]["screen_width_cm"])
        distance_to_screen_cm   = float(modules["module_1"]["tests"]["test_4"]["config"]["distance_to_screen_cm"])
        screen_resolution_dpi   = float(modules["module_1"]["tests"]["test_4"]["config"]["screen_resolution_dpi"])


        print("##### Cargados ls valores de la pantalla:  ")
        print(screen_width_cm, distance_to_screen_cm, screen_resolution_dpi)


        input_base_dir = r"C:\Users\akoun\Desktop\Biocruces\2.DATASETS\SiBurmuin_50_images_dataset\raw"
        generated_imgs_dir = r"C:\Users\akoun\Desktop\Biocruces\begibraintool\src\images\autogenerated_datasets\spatial_frequency_filters"
        sf_images_cpd_ranges = [(1, 3), (4, 6), (10, 18)]

        extract_spatial_frequencies_bandpass(input_base_dir, generated_imgs_dir, sf_images_cpd_ranges)
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ESPERE UN MOMENTO...
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  Routine CONTRAST_DATASET_GENERATOR
    RoutineSettingsComponent CONTRAST_DATASET_GENERATOR
      disabled = True
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  Routine BL_6_SEMANTIC_COLOR
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    ImageComponent semantic_stim_3
      image [set every repeat] = $(color_path_0+color_path_1+color_path_2)
      pos = (0.0, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_30
      allowedKeys = 'space', 'right', 'left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background
      disabled = True
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_30
      Code Type = Py
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      Begin Routine:
        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################

        contrast_threshold = threshold_dict['contrast_threshold']
        semantic_stim_3.contrast = 0.5#contrast_threshold + contrast_threshold*offset_porcentual

        logs_parametros_trial_10.alignText='left'
        logs_parametros_trial_10.anchorHoriz='left'

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False
      Each Frame:
        if general_config["logs"]:
                logs_parametros_trial_10.setText(
                f"Prueba 6 - Estímulos semánticos + COLOR\n"
                f"Intento: {intento}\n"
                f"Excentricidad: {excentricidad}º\n"
                f"Tamaño Estímulo: {tamanyo:.2f}\n"
                f"Tipo: {respuesta}\n"
            )

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and respuesta == 'vivo': # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and respuesta == 'inerte': # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'a' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_11.setAutoDraw(False)
            dots_black_11.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if general_config["feedback"]:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_7, success)
            semantic_stim_3.setAutoDraw(False)
            show_noise(dots_white_11, dots_black_11, response_time, 0, feedback_txt_7) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_6.finished = True
    TextComponent logs_parametros_trial_10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent right_arrow_3
      fillColor = white
      ori = 90
      pos = (0.5, 0)
      shape = arrow
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent left_arrow_3
      fillColor = white
      ori = -90
      pos = (-0.5, 0)
      shape = arrow
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent right_arrow_text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = Ser vivo
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    TextComponent left_arrow_text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = Inerte
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    DotsComponent dots_white_11
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_11
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_7
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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  Routine BL_6_DATASET_GENERATOR
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    CodeComponent code_31
      Code Type = Py
      Begin Routine:
        import sys
        sys.path.append(r'./python_scripts/')

        import generate_colored_silhouettes

        generate_colored_silhouettes.process_csv(csv_path='./BL6.csv', output_root='./images/autogenerated_datasets/color_semantic_silhouetes') # ruta desde .psyexp
Flow
  Routine calibration_routine
  Routine CONFIGURATION_ROUTINE
  LoopInitiator MODULE_1 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = modules["module_1"]["selected"]
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    LoopInitiator MODULE_1_PRETEST loopType="TrialHandler"
      loopType = sequential
      nReps = modules["module_1"]["tests"]["pretest"]["selected"]
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      LoopInitiator spatial_freq_instructions loopType="TrialHandler"
        conditions = [{'title': 'SPATIAL FREQUENCY THRESHOLD STAIRCASE TEST', 'instruction_1': 'En este experimento, evaluaremos tu capacidad para percibir las líneas de un patrón visual conocido como parche de Gabor', 'instruction_2': 'Observa la pantalla: Aparecerá un patrón de líneas', 'instruction_3': 'Si puedes ver las líneas del patrón, pulsa la tecla S. Si no puedes ver las líneas (parece una imagen borrosa o uniforme), pulsa la tecla N.', 'instruction_4': 'No te preocupes por acertar, lo importante es que indiques lo que ves.', 'instruction_5': 'Pulsa la barra espaciadora cuando quieras empezar la prueba'}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
        conditionsFile = instructions/spatial_frequency_staircase_instructions.xlsx
        isTrials = False
        loopType = random
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator spatial_freq_instructions
      Routine SPATIAL_FREQ_STAIRCASE_TEST
      LoopInitiator contrast_instructions loopType="TrialHandler"
        conditions = [{'title': 'SPATIAL FREQUENCY THRESHOLD STAIRCASE TEST', 'instruction_1': 'Observa la pantalla: Aparecerá un patrón de líneas con diferentes grados de contraste.', 'instruction_2': 'Si puedes ver las líneas del patrón, pulsa la tecla S.', 'instruction_3': 'Si no puedes ver las líneas (la imagen parece completamente uniforme o sin detalles), pulsa la tecla N.', 'instruction_4': None, 'instruction_5': 'Pulsa la barra espaciadora cuando quieras empezar la prueba'}]
        conditionsFile = instructions/contrast_staircase_instructions.xlsx
        loopType = random
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator contrast_instructions
      Routine CONTRAST_STAIRCASE_TEST
      LoopInitiator color_instructions loopType="TrialHandler"
        conditions = [{'title': 'COLOR/SATURATION  THRESHOLD STAIRCASE TEST', 'instruction_1': 'Observa la pantalla: Aparecerá un patrón de líneas con diferentes colores.', 'instruction_2': 'Si puedes diferenciar los colores, pulsa la tecla S.', 'instruction_3': 'Si ves un color uniforme, pulsa la tecla N.', 'instruction_4': None, 'instruction_5': 'Pulsa la barra espaciadora cuando quieras empezar la prueba'}]
        conditionsFile = instructions/color_staircase_instructions.xlsx
        loopType = sequential
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator color_instructions
      LoopInitiator colors_to_test loopType="TrialHandler"
        conditionsFile = colors_to_test.xlsx
        isTrials = False
        loopType = sequential
        nReps = 1
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        conditions:
          [{'color_name': 'red', 'color_h': 0, 'color_v': 100},
          {'color_name': 'green', 'color_h': 120, 'color_v': 100}]
        Routine COLOR_STAIRCASE_TEST
      LoopTerminator colors_to_test
    LoopTerminator MODULE_1_PRETEST
    Routine LOAD_THRESHOLDS
    LoopInitiator MODULE_1_TEST_1 loopType="TrialHandler"
      loopType = sequential
      nReps = modules["module_1"]["tests"]["test_1"]["selected"]
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      LoopInitiator BL1_instructions loopType="TrialHandler"
        conditions = [{'title': 'BLOQUE 1: FRECUENCIA ESPACIAL', 'instruction_1': 'Una vez completada la fase de calibración, vamos a por el test!. ', 'instruction_2': 'Debes usar las flechas del teclado (derecha/izquierda) para responder a la siguiente pregunta: ¿Qué orientación tiene el parche? Solo tienes 2 segundos para ver el estímulo.', 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
        conditionsFile = instructions/BL1_instructions.xlsx
        loopType = sequential
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator BL1_instructions
      LoopInitiator trials_bl_1 loopType="TrialHandler"
        conditionsFile = BL1.csv
        isTrials = False
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('intento', 'BL1_1'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', 0)]),
          OrderedDict([('intento', 'BL1_2'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', 0)]),
          OrderedDict([('intento', 'BL1_3'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', -1)]),
          OrderedDict([('intento', 'BL1_4'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', -1)]),
          OrderedDict([('intento', 'BL1_5'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', -1)]),
          OrderedDict([('intento', 'BL1_6'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', -1)]),
          OrderedDict([('intento', 'BL1_7'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', -2)]),
          OrderedDict([('intento', 'BL1_8'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', -2)]),
          OrderedDict([('intento', 'BL1_9'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', -2)]),
          OrderedDict([('intento', 'BL1_10'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', -2)])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
        Routine BL_1_SPATIAL_FREQ
      LoopTerminator trials_bl_1
    LoopTerminator MODULE_1_TEST_1
    LoopInitiator MODULE_1_TEST_2 loopType="TrialHandler"
      loopType = sequential
      nReps = modules["module_1"]["tests"]["test_2"]["selected"]
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      LoopInitiator BL2_instructions loopType="TrialHandler"
        conditions = [{'title': 'BLOQUE 2: COLOR/SATURACIÓN', 'instruction_1': None, 'instruction_2': 'Debes usar las flechas del teclado (derecha/izquierda) para responder a la siguiente pregunta: ¿Qué orientación tiene el parche? Solo tienes 2 segundos para ver el estímulo.', 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
        conditionsFile = instructions/BL2_instructions.xlsx
        isTrials = False
        loopType = sequential
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator BL2_instructions
      LoopInitiator trials_bl_2 loopType="TrialHandler"
        conditionsFile = BL2.csv
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('intento', 'BL2_1'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('color_1_h', 0), ('color_1_s', 85), ('color_1_v', 100), ('color_name', 'red'), ('umbral_porcentual', 20)]),
          OrderedDict([('intento', 'BL2_2'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('color_1_h', 0), ('color_1_s', 80), ('color_1_v', 100), ('color_name', 'red'), ('umbral_porcentual', 20)]),
          OrderedDict([('intento', 'BL2_3'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('color_1_h', 120), ('color_1_s', 20), ('color_1_v', 100), ('color_name', 'green'), ('umbral_porcentual', 20)]),
          OrderedDict([('intento', 'BL2_4'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('color_1_h', 120), ('color_1_s', 10), ('color_1_v', 100), ('color_name', 'green'), ('umbral_porcentual', 20)]),
          OrderedDict([('intento', 'BL2_5'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('color_1_h', 0), ('color_1_s', 20), ('color_1_v', 100), ('color_name', 'red'), ('umbral_porcentual', 20)])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
        Routine BL_2_COLOR
      LoopTerminator trials_bl_2
    LoopTerminator MODULE_1_TEST_2
    LoopInitiator MODULE_1_TEST_3 loopType="TrialHandler"
      loopType = random
      nReps = modules["module_1"]["tests"]["test_3"]["selected"]
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      LoopInitiator BL3_instructions loopType="TrialHandler"
        conditions = [{'title': 'BLOQUE 3: CONTRASTE', 'instruction_1': None, 'instruction_2': 'Debes usar las flechas del teclado (derecha/izquierda) para responder a la siguiente pregunta: ¿Qué orientación tiene el parche? Solo tienes 2 segundos para ver el estímulo.', 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
        conditionsFile = instructions/BL3_instructions.xlsx
        isTrials = False
        loopType = sequential
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator BL3_instructions
      LoopInitiator trials_bl_3 loopType="TrialHandler"
        conditionsFile = BL3.csv
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('intento', 'BL3_1'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', 0)]),
          OrderedDict([('intento', 'BL3_2'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', 0)]),
          OrderedDict([('intento', 'BL3_3'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', 0)]),
          OrderedDict([('intento', 'BL3_4'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', 0)]),
          OrderedDict([('intento', 'BL3_5'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', 0)]),
          OrderedDict([('intento', 'BL3_6'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', 4)]),
          OrderedDict([('intento', 'BL3_7'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', 4)]),
          OrderedDict([('intento', 'BL3_8'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', 4)]),
          OrderedDict([('intento', 'BL3_9'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', 4)]),
          OrderedDict([('intento', 'BL3_10'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', 4)])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
        Routine BL_3_CONTRAST
      LoopTerminator trials_bl_3
    LoopTerminator MODULE_1_TEST_3
    LoopInitiator MODULE_1_TEST_4 loopType="TrialHandler"
      loopType = random
      nReps = modules["module_1"]["tests"]["test_4"]["selected"]
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      LoopInitiator BL4_instructions loopType="TrialHandler"
        conditions = [{'title': 'BLOQUE 5: ESTÍMULOS SEMÁNTICOS - FRECUENCIA ESPACIAL', 'instruction_1': '…', 'instruction_2': '…', 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
        conditionsFile = instructions/BL4_instructions.xlsx
        loopType = random
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator BL4_instructions
      Routine SF_DATASET_GENERATOR
      LoopInitiator trials_bl_4 loopType="TrialHandler"
        conditionsFile = BL4.csv
        isTrials = False
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('intento', 'BL5_1'), ('sf_path_0', 'images\\autogenerated_datasets\\spatial_frequency_filters\\'), ('sf_path_1', 'bandpass_1_3_cpd\\'), ('sf_path_2', '003_0018.jpg'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respuesta', 'inerte'), ('tamanyo', 1)]),
          OrderedDict([('intento', 'BL5_2'), ('sf_path_0', 'images\\autogenerated_datasets\\spatial_frequency_filters\\'), ('sf_path_1', 'bandpass_1_3_cpd\\'), ('sf_path_2', '004_0015.jpg'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respuesta', 'inerte'), ('tamanyo', 1)]),
          OrderedDict([('intento', 'BL5_3'), ('sf_path_0', 'images\\autogenerated_datasets\\spatial_frequency_filters\\'), ('sf_path_1', 'bandpass_1_3_cpd\\'), ('sf_path_2', '005_0014.jpg'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respuesta', 'inerte'), ('tamanyo', 1)]),
          OrderedDict([('intento', 'BL5_4'), ('sf_path_0', 'images\\autogenerated_datasets\\spatial_frequency_filters\\'), ('sf_path_1', 'bandpass_1_3_cpd\\'), ('sf_path_2', 'M_N574077.jpg'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respuesta', 'vivo'), ('tamanyo', 1)]),
          OrderedDict([('intento', 'BL5_5'), ('sf_path_0', 'images\\autogenerated_datasets\\spatial_frequency_filters\\'), ('sf_path_1', 'bandpass_1_3_cpd\\'), ('sf_path_2', 'M_N70025.jpg'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respuesta', 'vivo'), ('tamanyo', 1)])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
        Routine BL_4_SEMANTIC_STIM
      LoopTerminator trials_bl_4
    LoopTerminator MODULE_1_TEST_4
    LoopInitiator MODULE_1_TEST_5 loopType="TrialHandler"
      loopType = random
      nReps = modules["module_1"]["tests"]["test_5"]["selected"]
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      LoopInitiator BL5_instructions loopType="TrialHandler"
        conditions = [{'title': 'BLOQUE 5: ESTÍMULOS SEMÁNTICOS - FRECUENCIA ESPACIAL', 'instruction_1': 'A continuación vas a ver una série de imágenes. Para cada imagen que se muestre debes responder si se trata de un ser vivo o un objeto inerte.', 'instruction_2': 'Las imágenes no se van a ver al completo, hemos modificado unos parámetros para hacerlo un poco más dificil.', 'instruction_3': 'Pulsa el botón central para empezar la prueba.', 'instruction_4': None, 'instruction_5': None}]
        conditionsFile = instructions/BL5_instructions.xlsx
        loopType = random
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator BL5_instructions
      Routine CONTRAST_DATASET_GENERATOR
      LoopInitiator trials_bl_5 loopType="TrialHandler"
        conditionsFile = BL5.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('intento', 'BL5_1'), ('contrast_path_0', 'images\\autogenerated_datasets\\contrast_semantic_silhouetes\\'), ('contrast_path_1', 'animals\\'), ('contrast_path_2', 'B_N209044_silhouette.png'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respuesta', 'vivo'), ('tamanyo', 1), ('semantic_contrast_offset', 3)]),
          OrderedDict([('intento', 'BL5_2'), ('contrast_path_0', 'images\\autogenerated_datasets\\contrast_semantic_silhouetes\\'), ('contrast_path_1', 'animals\\'), ('contrast_path_2', 'B_N253041_silhouette.png'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respuesta', 'vivo'), ('tamanyo', 1), ('semantic_contrast_offset', 3)]),
          OrderedDict([('intento', 'BL5_3'), ('contrast_path_0', 'images\\autogenerated_datasets\\contrast_semantic_silhouetes\\'), ('contrast_path_1', 'animals\\'), ('contrast_path_2', 'B_N253081_silhouette.png'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respuesta', 'vivo'), ('tamanyo', 1), ('semantic_contrast_offset', 3)]),
          OrderedDict([('intento', 'BL5_4'), ('contrast_path_0', 'images\\autogenerated_datasets\\contrast_semantic_silhouetes\\'), ('contrast_path_1', 'animals\\'), ('contrast_path_2', 'B_N253099_silhouette.png'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respuesta', 'vivo'), ('tamanyo', 1), ('semantic_contrast_offset', 6)])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
        Routine BL_5_SEMANTIC_CONTRAST
      LoopTerminator trials_bl_5
    LoopTerminator MODULE_1_TEST_5
    LoopInitiator MODULE_1_TEST_6 loopType="TrialHandler"
      loopType = random
      nReps = modules["module_1"]["tests"]["test_6"]["selected"]
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      Routine BL_6_DATASET_GENERATOR
      LoopInitiator trials_bl_6 loopType="TrialHandler"
        conditionsFile = BL6.csv
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('intento', 'BL5_1'), ('color_path_0', 'images\\autogenerated_datasets\\color_semantic_silhouetes\\'), ('color_path_1', 'animals\\'), ('color_path_2', 'B_N209044_silhouette.png'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respuesta', 'vivo'), ('tamanyo', 1), ('color_h', 100), ('color_s', 100), ('color_v', 100)]),
          OrderedDict([('intento', 'BL5_2'), ('color_path_0', 'images\\autogenerated_datasets\\color_semantic_silhouetes\\'), ('color_path_1', 'animals\\'), ('color_path_2', 'B_N253041_silhouette.png'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respuesta', 'vivo'), ('tamanyo', 1), ('color_h', 100), ('color_s', 100), ('color_v', 100)]),
          OrderedDict([('intento', 'BL5_3'), ('color_path_0', 'images\\autogenerated_datasets\\color_semantic_silhouetes\\'), ('color_path_1', 'animals\\'), ('color_path_2', 'B_N253081_silhouette.png'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respuesta', 'vivo'), ('tamanyo', 1), ('color_h', 100), ('color_s', 100), ('color_v', 100)]),
          OrderedDict([('intento', 'BL5_4'), ('color_path_0', 'images\\autogenerated_datasets\\color_semantic_silhouetes\\'), ('color_path_1', 'animals\\'), ('color_path_2', 'B_N253099_silhouette.png'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respuesta', 'vivo'), ('tamanyo', 1), ('color_h', 100), ('color_s', 100), ('color_v', 100)])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
        Routine BL_6_SEMANTIC_COLOR
      LoopTerminator trials_bl_6
    LoopTerminator MODULE_1_TEST_6
  LoopTerminator MODULE_1
  LoopInitiator MODULE_2 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = modules["module_2"]["selected"]
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    LoopInitiator MODULE_2_TEST_1 loopType="TrialHandler"
      loopType = sequential
      nReps = modules["module_2"]["tests"]["test_1"]["selected"]
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      LoopInitiator et_resting_state_instructions loopType="TrialHandler"
        conditions = [{'title': 'EYE TRACKING (I)', 'instruction_1': 'Mira a la pantalla durante 60 segundos', 'instruction_2': None, 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
        conditionsFile = instructions/et_resting_instructions.xlsx
        isTrials = False
        loopType = sequential
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator et_resting_state_instructions
      Routine ET_RESTING_STATE
      LoopInitiator et_task_instructions loopType="TrialHandler"
        conditions = [{'title': 'EYE TRACKING', 'instruction_1': 'Mira al estímulo que aparece en el centro de la pantalla durante 60 segundos', 'instruction_2': None, 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
        conditionsFile = instructions/et_task_instructions.xlsx
        isTrials = False
        loopType = sequential
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator et_task_instructions
      Routine ET_SCREEN_POINT_TASK
    LoopTerminator MODULE_2_TEST_1
    LoopInitiator MODULE_2_TEST_2 loopType="TrialHandler"
      loopType = sequential
      nReps = modules["module_2"]["tests"]["test_2"]["selected"]
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      LoopInitiator trials loopType="TrialHandler"
        conditions = [{'title': 'BLOQUE 4: FLICKER', 'instruction_1': None, 'instruction_2': 'Debes usar las flechas del teclado (derecha/izquierda) para responder a la siguiente pregunta: ¿Qué orientación tiene el parche? Solo tienes 2 segundos para ver el estímulo.', 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
        conditionsFile = instructions/BL4_instructions.xlsx
        loopType = sequential
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator trials
      Routine FFT_STAIRCASE_TEST
    LoopTerminator MODULE_2_TEST_2
    LoopInitiator MODULE_2_TEST_3 loopType="TrialHandler"
      loopType = random
      nReps = modules["module_2"]["tests"]["test_3"]["selected"]
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      LoopInitiator et_saccade_task_instructions loopType="TrialHandler"
        conditions = [{'title': 'EYE TRACKING', 'instruction_1': 'Mira atentamente al estímulo que sale en el centro de la pantalla.', 'instruction_2': 'Si el estímulo es de color verde, cuando este se mueva deber apuntar con tu mirada lo más rápido posible al estímulo. ', 'instruction_3': 'Si el estímulo es de color rojo, debes mirar al lado contrario al que se mueve. ', 'instruction_4': None, 'instruction_5': None}]
        conditionsFile = instructions/et_saccade_task_instructions.xlsx
        isTrials = False
        loopType = sequential
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator et_saccade_task_instructions
      LoopInitiator IPAST_LOOP loopType="TrialHandler"
        conditionsFile = IPAST_loop.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'task_type': 'saccade', 'alignment': 'l'},
          {'task_type': 'antisaccade', 'alignment': 'r'},
          {'task_type': 'saccade', 'alignment': 'r'},
          {'task_type': 'saccade', 'alignment': 'r'},
          {'task_type': 'antisaccade', 'alignment': 'r'},
          {'task_type': 'antisaccade', 'alignment': 'l'},
          {'task_type': 'saccade', 'alignment': 'l'},
          {'task_type': 'antisaccade', 'alignment': 'l'},
          {'task_type': 'antisaccade', 'alignment': 'r'}]
        Routine SACCADE_TASK
      LoopTerminator IPAST_LOOP
    LoopTerminator MODULE_2_TEST_3
    LoopInitiator MODULE_2_TEST_4 loopType="TrialHandler"
      loopType = sequential
      nReps = modules["module_2"]["tests"]["test_4"]["selected"]
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      LoopInitiator DVS_coherence_instructions loopType="TrialHandler"
        conditions = [{'title': 'DVS TASK', 'instruction_1': 'En esta tarea debes seguir con la mirada el estímulo de color', 'instruction_2': 'Verás que se esconde del resto de puntos y que el movimiento del estímulo principal y del resto de bolas cambiará a lo largo del tiempo. Trata de seguirlo con la mayor precisión posible.', 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
        conditionsFile = instructions/DVS_tracking_task_instructions.xlsx
        isTrials = False
        loopType = sequential
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator DVS_coherence_instructions
      Routine DVS_COHERENCE
    LoopTerminator MODULE_2_TEST_4
    LoopInitiator MODULE_2_TEST_5 loopType="TrialHandler"
      loopType = random
      nReps = modules["module_2"]["tests"]["test_5"]["selected"]
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      LoopInitiator visual_search_instructions loopType="TrialHandler"
        conditions = [{'title': 'VISUAL SEARCH TEST', 'instruction_1': 'Observa las distintas imágenes que aparecerán a continuación.', 'instruction_2': None, 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
        conditionsFile = instructions/visual_search_task_instructions.xlsx
        isTrials = False
        loopType = sequential
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator visual_search_instructions
      LoopInitiator trials_2 loopType="TrialHandler"
        conditionsFile = images/autogenerated_datasets/visual_search_rings/rutas_imagenes.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('ruta_relativa', 'images\\autogenerated_datasets\\visual_search_rings\\matriz_anillos_(7,4)--(0, 0).png')]),
          OrderedDict([('ruta_relativa', 'images\\autogenerated_datasets\\visual_search_rings\\matriz_anillos_(7,4)--(1, 2).png')]),
          OrderedDict([('ruta_relativa', 'images\\autogenerated_datasets\\visual_search_rings\\matriz_anillos_(7,4)--(2, 3).png')]),
          OrderedDict([('ruta_relativa', 'images\\autogenerated_datasets\\visual_search_rings\\matriz_anillos_(7,4)--(2, 4).png')]),
          OrderedDict([('ruta_relativa', 'images\\autogenerated_datasets\\visual_search_rings\\matriz_anillos_(7,4)--(3, 3).png')]),
          OrderedDict([('ruta_relativa', 'images\\autogenerated_datasets\\visual_search_rings\\matriz_anillos_(7,4)--(4, 3).png')]),
          OrderedDict([('ruta_relativa', 'images\\autogenerated_datasets\\visual_search_rings\\matriz_anillos_(7,4)--(4, 4).png')]),
          OrderedDict([('ruta_relativa', 'images\\autogenerated_datasets\\visual_search_rings\\matriz_anillos_(7,4)--(5, 1).png')]),
          OrderedDict([('ruta_relativa', 'images\\autogenerated_datasets\\visual_search_rings\\matriz_anillos_(7,4)--(6, 1).png')]),
          OrderedDict([('ruta_relativa', 'images\\autogenerated_datasets\\visual_search_rings\\matriz_anillos_(7,4)--(7, 4).png')])]
        Routine VISUAL_SEARCH_RINGS
      LoopTerminator trials_2
      LoopInitiator visual_search_imgs loopType="TrialHandler"
        conditionsFile = visual_search_loop_images.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\begiBrainDemo\\images\\visual_search\\bathroom_23_c_l_toiletpaper.jpg'},
          {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\begiBrainDemo\\images\\visual_search\\bedroom_10_c_l_hanger.jpg'},
          {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\begiBrainDemo\\images\\visual_search\\bedroom_20_i_sr_bleach.jpg'},
          {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\begiBrainDemo\\images\\visual_search\\bedroom_27_i_r_pingpongpaddle.jpg'},
          {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\begiBrainDemo\\images\\visual_search\\bedroom_4_c_r_lamp.jpg'},
          {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\begiBrainDemo\\images\\visual_search\\bedroom_8_i_l_sieve.jpg'},
          {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\begiBrainDemo\\images\\visual_search\\kitchen_8_i_sl_mouse.jpg'},
          {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\begiBrainDemo\\images\\visual_search\\office_1_i_l_rollingpin.jpg'},
          {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\begiBrainDemo\\images\\visual_search\\office_23_i_sl_toycar.jpg'},
          {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\begiBrainDemo\\images\\visual_search\\office_30_c_sl_book.jpg'},
          {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\begiBrainDemo\\images\\visual_search\\waitingroom_12_i_sl_belt.jpg'}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
        Routine ET_VISUAL_SEARCH
      LoopTerminator visual_search_imgs
    LoopTerminator MODULE_2_TEST_5
  LoopTerminator MODULE_2
  LoopInitiator MODULE_3 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = modules["module_3"]["selected"]
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    LoopInitiator MODULE_3_TEST_1 loopType="TrialHandler"
      loopType = sequential
      nReps = modules["module_3"]["tests"]["test_1"]["selected"]
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      LoopInitiator pupilometry_instructions loopType="TrialHandler"
        conditions = [{'title': 'PUPILOMETRÍA', 'instruction_1': 'En esta prueba vamos a analizar la dilatación de tus pupilas', 'instruction_2': 'El primer paso es acostumbrarse a la oscuridad para que las pupilas se dilaten por completo.', 'instruction_3': 'Después de 10 minutos de espera con la pantalla en negro, verás varios flashes de distintos colores. Es importante que no cierres los ojos en ese momento.', 'instruction_4': 'Pulsa siguiente para empezar.', 'instruction_5': None}]
        conditionsFile = instructions/pupilometry_task_instructions.xlsx
        isTrials = False
        loopType = sequential
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator pupilometry_instructions
      LoopInitiator pupilometry_config loopType="TrialHandler"
        conditionsFile = pupilometry_colors_and_sequence.xlsx
        isTrials = False
        loopType = sequential
        nReps = 1
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        conditions:
          [{'adaptation_time': 10, 'color': 'white', 'flash_time': 2},
          {'adaptation_time': 5, 'color': 'red', 'flash_time': 2},
          {'adaptation_time': 5, 'color': 'blue', 'flash_time': 2},
          {'adaptation_time': 2, 'color': 'black', 'flash_time': 2}]
        Routine PUPILOMETRY_TASK_adaptation_period
        Routine PUPILOMETRY_TASK_flash
      LoopTerminator pupilometry_config
    LoopTerminator MODULE_3_TEST_1
    LoopInitiator MODULE_3_TEST_2 loopType="TrialHandler"
      loopType = sequential
      nReps = modules["module_3"]["tests"]["test_2"]["selected"]
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      LoopInitiator fearful_and_affective_images_insructions loopType="TrialHandler"
        conditions = [{'title': 'SPATIAL FREQUENCY THRESHOLD STAIRCASE TEST', 'instruction_1': 'En este experimento, evaluaremos tu capacidad para percibir las líneas de un patrón visual conocido como parche de Gabor', 'instruction_2': 'Observa la pantalla: Aparecerá un patrón de líneas', 'instruction_3': 'Si puedes ver las líneas del patrón, pulsa la tecla S. Si no puedes ver las líneas (parece una imagen borrosa o uniforme), pulsa la tecla N.', 'instruction_4': 'No te preocupes por acertar, lo importante es que indiques lo que ves.', 'instruction_5': 'Pulsa la barra espaciadora cuando quieras empezar la prueba'}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
        conditionsFile = instructions/fearful_and_affective_images_instrucitons.xlsx
        loopType = sequential
        nReps = 1
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        Routine INSTRUCTIONS
      LoopTerminator fearful_and_affective_images_insructions
      LoopInitiator imgs_loop loopType="TrialHandler"
        conditionsFile = CEACO_image_selection.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'arousal': 'high', 'valence': 'low', 'ceaco_relative_path': '..\\..\\2.DATASETS\\CEACO\\EM0701_0800\\EM0710.jpg'},
          {'arousal': 'high', 'valence': 'low', 'ceaco_relative_path': '..\\..\\2.DATASETS\\CEACO\\EM0501_0600\\EM0579.jpg'},
          {'arousal': 'high', 'valence': 'low', 'ceaco_relative_path': '..\\..\\2.DATASETS\\CEACO\\EM0601_0700\\EM0618.jpg'},
          {'arousal': 'high', 'valence': 'low', 'ceaco_relative_path': '..\\..\\2.DATASETS\\CEACO\\EM0801_0900\\EM0819.jpg'},
          {'arousal': 'high', 'valence': 'low', 'ceaco_relative_path': '..\\..\\2.DATASETS\\CEACO\\EM0801_0900\\EM0846.jpg'},
          {'arousal': 'high', 'valence': 'low', 'ceaco_relative_path': '..\\..\\2.DATASETS\\CEACO\\EM0701_0800\\EM0707.jpg'},
          {'arousal': 'high', 'valence': 'low', 'ceaco_relative_path': '..\\..\\2.DATASETS\\CEACO\\EM1001_1100\\EM1066.jpg'},
          {'arousal': 'high', 'valence': 'low', 'ceaco_relative_path': '..\\..\\2.DATASETS\\CEACO\\EM0901_1000\\EM0931.jpg'},
          {'arousal': 'high', 'valence': 'low', 'ceaco_relative_path': '..\\..\\2.DATASETS\\CEACO\\EM0201_0300\\EM0284.jpg'},
          {'arousal': 'high', 'valence': 'low', 'ceaco_relative_path': '..\\..\\2.DATASETS\\CEACO\\EM0801_0900\\EM0879.jpg'},
          {'arousal': 'high', 'valence': 'high', 'ceaco_relative_path': '..\\..\\2.DATASETS\\CEACO\\EM0301_0400\\EM0369.jpg'},
          {'arousal': 'high', 'valence': 'high', 'ceaco_relative_path': '..\\..\\2.DATASETS\\CEACO\\EM0401_0500\\EM0457.jpg'},
          {'arousal': 'high', 'valence': 'high', 'ceaco_relative_path': '..\\..\\2.DATASETS\\CEACO\\EM0201_0300\\EM0269.jpg'}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
        Routine FEARFUL_AND_AFFECTIVE_IMAGES_TASK
      LoopTerminator imgs_loop
    LoopTerminator MODULE_3_TEST_2
  LoopTerminator MODULE_3
  LoopInitiator END_OF_EXPERIMENT loopType="TrialHandler"
    conditions = [{'title': 'FINAL DEL EXPERIMENTO', 'instruction_1': 'Este es el final del experimento. Ya puedes incorporarte y quitarte los sensores de la mano. ¡¡Muchas gracias por participar!!', 'instruction_2': None, 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
    conditionsFile = instructions/end_of_experiment_instructions.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    Routine INSTRUCTIONS
  LoopTerminator END_OF_EXPERIMENT
